def model Kapela_VSM_Final as
  def unit picoL as
    unit litre {pref: pico};
  enddef;
  def unit per__ms_x_mM2_ as
    unit ms {expo: -1};
    unit mM {expo: -2};
  enddef;
  def unit mM as
    unit mole;
    unit metre {expo: -3.0};
  enddef;
  def unit per_ms as
    unit second {expo: -1.0, pref: milli};
  enddef;
  def unit nanosiemens as
    unit siemens {pref: nano};
  enddef;
  def unit coulomb_x_mV_per__K_x_mol_ as
    unit coulomb;
    unit volt {pref: milli};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit coulomb_millivolt_per_mol as
    unit coulomb;
    unit volt {pref: milli};
    unit mole {expo: -1};
  enddef;
  def unit per_cm2 as
    unit metre {expo: -2.0, pref: centi};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mol2_per__J_x_s_x_cm2_ as
    unit second {expo: -1};
    unit mole {expo: 2.0};
    unit joule {expo: -1.0};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit coulomb_mV_per_mol as
    unit coulomb;
    unit volt {pref: milli};
    unit mole {expo: -1};
  enddef;
  def unit picoampere as
    unit ampere {pref: pico};
  enddef;
  def unit nanosiemens_per_picofarad as
    unit nanosiemens;
    unit picofarad {expo: -1};
  enddef;
  def unit cm_per_s as
    unit metre {pref: centi};
    unit second {expo: -1.0};
  enddef;
  def unit picofarad as
    unit farad {pref: pico};
  enddef;
  def unit per__ms_x_mM_ as
    unit ms {expo: -1};
    unit mM {expo: -1};
  enddef;
  def unit mM2 as
    unit mM {expo: 2};
  enddef;
  def unit pL_mM_per_ms_mol as
    unit picoL;
    unit mM;
    unit ms {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit cm3_per_s as
    unit second {expo: -1.0};
    unit metre {expo: 3.0, pref: centi};
  enddef;
  def unit K as
    unit kelvin;
  enddef;
  def unit per_mol as
    unit mole {expo: -1.0};
  enddef;
  def unit picoampere_per_picofarad as
    unit ampere {pref: pico};
    unit picofarad {expo: -1};
  enddef;
  def unit picofarad_per_cm2 as
    unit picofarad;
    unit meter {expo: -2, pref: centi};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, pref: centi};
  enddef;
  def unit picoL_per_mol as
    unit mole {expo: -1.0};
    unit litre {pref: pico};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: milli};
    unit metre {expo: -3.0};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit femto_SF as
    unit volt {pref: femto};
    unit volt {expo: -1};
  enddef;
  def unit peta_SF as
    unit volt {pref: peta};
    unit volt {expo: -1};
  enddef;
  def unit micro_SF as
    unit volt {pref: micro};
    unit volt {expo: -1};
  enddef;
  def unit nano_SF as
    unit volt {pref: nano};
    unit volt {expo: -1};
  enddef;
  def unit mega_SF as
    unit volt {pref: mega};
    unit volt {expo: -1};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;

  def comp Kapela as
    var ICa_SOC: picoampere;
    var K_CSQN: mM {init: 0.8};
    var E_Na: mV;
    var P_SOC0: dimensionless {init: 0.0};
    var p_f: dimensionless {init: p_f0};
    // previously p_f0 but the script cannot loop through 1: Variable 'p_f' in component 'Kapela' is initialised using variable 'p_f0', which is not a constant. so I calculated the initial value manually
    var p_f0: dimensionless;
    p_f0 = 1{dimensionless}/(1{dimensionless}+exp((V_m0-V_50KCa0)/18.25{mV}*(-1{dimensionless})));
    var d_NCX: dimensionless {init: 3.0E-4};
    var Na_i0: mM {init: 8.4};
    var G_TG: dimensionless {init: 100000.0};
    var I_SERCA: picoampere;
    var k_DsGC: per_ms {init: 4.0E-4};
    var V_50KCa0: mV;
    var I_stim: picoampere;
    // I_stim is an external stimulation current
    var INa_NSC: picoampere;
    var I_Kv: picoampere;
    var K_ClcGMP: mM {init: 0.0064};
    var tau_fL: ms;
    var k_pdecGMP: per_ms {init: 6.95E-5};
    var p_K: dimensionless {init: p_K0};
    var p_K0: dimensionless;
    p_K0 = 1{dimensionless}/(1{dimensionless}+exp((V_m0+11{mV})/15{mV}*(-1{dimensionless})));
    var Q_10: dimensionless {init: 1.87};
    var A1_sGC: mM;
    var i_KCa: picoampere;
    var k_DrsGC: per_ms {init: 1.0E-4};
    var tau_SOC: ms {init: 100.0};
    var Ca_i0: mM {init: 6.8E-5};
    var Ca_u: mM {init: Ca_u0};
    var Ca_r: mM {init: Ca_r0};
    var k_2sGC: per_ms {init: 6.4E-6};
    var PCa_NSC: cm_per_s;
    var Istim_amp: picoampere {init: 0.0};
    var dV_50KCaNO: mV {init: 46.3};
    var ICl_NaKCl: picoampere;
    var Ca_u0: mM {init: 0.66};
    var P_KCa: dimensionless;
    var tau_ps: ms {init: 35.9};
    var Ca_i: mM {init: Ca_i0};
    var V_50KCa: mV;
    var R_leak: dimensionless {init: 1.07E-5};
    var I_SOC: picoampere;
    var g_NCX: picoampere {init: 4.87E-4};
    var f_L: dimensionless {init: f_L0};
    var f_L0: dimensionless;
    f_L0 = 1{dimensionless}/(1{dimensionless}+exp((V_m0+42{mV})/9.1{mV}));
    var Ca_e: mM {init: 2.0};
    var K_mup: mM {init: 0.0010};
    var R_cGMP: dimensionless;
    var K_dKe: mM {init: 1.6};
    var d_L: dimensionless {init: d_L0};
    var d_L0: dimensionless;
    d_L0 = 1{dimensionless}/(1{dimensionless}+exp(V_m0/8.3{mV}*(-1{dimensionless})));
    var P_SOC: dimensionless {init: 0.0};
    var tau_pf: ms {init: 0.84};
    var Vol_Ca: picoL {init: 0.7};
    var gNa_SOC: nanosiemens {init: 0.0575};
    var dbar_L: dimensionless;
    var V_cGMP: mM_per_ms {init: V_cGMP0};
    var IP3: mM {init: IP3_0};
    var Ibar_PMCA: picoampere {init: 5.37};
    var I_IP3: picoampere;
    var ICa_NSC: picoampere;
    var pbar_o: dimensionless;
    var K_inhIP3: mM {init: 1.0E-4};
    var B5_sGC: mM;
    var R_NO0: dimensionless;
    var tau_dL: ms;
    var V_m: mV {init: V_m0};
    var V_cGMP0: mM_per_ms {init: 0.0};
    var I_NaK: picoampere;
    var gamma_NCX: dimensionless {init: 0.45};
    var P_BKCa: cm3_per_s {init: 3.9E-13};
    var tau_q2: ms {init: 2884.0};
    var tau_q1: ms {init: 371.0};
    var K_i0: mM {init: 140.0};
    var alpha_Cl: dimensionless;
    var P_Cl: dimensionless;
    var tau_pK: ms;
    var Po_NSC: dimensionless;
    var R_cGMP0: dimensionless;
    var Na_dNai: mM {init: 22.0};
    var R_11: dimensionless {init: R_110};
    var R_10: dimensionless {init: R_100};
    var V_m0: mV {init: -59.4};
    var pbar_K: dimensionless;
    var n_HNai: dimensionless {init: 1.7};
    var rho_rG: dimensionless;
    var gamma_G: picoL_per_mol;
    var alpha_G: per_ms {init: 2.781E-8};
    var k_3sGC: per__ms_x_mM_ {init: 4.2};
    var z_Cl: dimensionless {init: -1.0};
    var gCa_SOC: nanosiemens {init: 0.0083};
    var K_ClCa: mM {init: 3.65E-4};
    var R_NaKClcGMP: dimensionless;
    var A0_sGC: mM2;
    var Ibar_IP3: per_ms {init: 0.00288};
    var R_01: dimensionless {init: R_010};
    var INa_totm: picoampere;
    var R_00: dimensionless;
    var z_Ca: dimensionless {init: 2.0};
    var I_NSC: picoampere;
    var Ibar_NaK: picoampere_per_picofarad {init: 2.3083};
    var Ca_r0: mM {init: 0.57};
    var k_rG: per_ms {init: 1.75E-7};
    var n_ClCa: dimensionless {init: 2.0};
    var R_TG: dimensionless {init: 20000.0};
    var R_110: dimensionless {init: 4.0E-6};
    var PK_NSC: cm_per_s;
    var ICl_totm: picoampere;
    var I_BKCa: picoampere;
    var qbar: dimensionless;
    var k_eG: per_ms {init: 6.0E-6};
    var tau_rel: ms {init: 0.0333};
    var cGMP_i: mM {init: cGMP_i0};
    var NO: mM;
    var k_m1sGC: per_ms {init: 0.015};
    var h_IP3: dimensionless {init: h_IP30};
    var h_IP30: dimensionless;
    h_IP30 = K_inhIP3/(Ca_i0+K_inhIP3);
    var tau_sGC: ms;
    var Pbar_SOC: dimensionless;
    var I_rel: picoampere;
    var F_per_RT: per_mV;
    var z_Na: dimensionless {init: 1.0};
    var R_100: dimensionless {init: 0.0033};
    var NE: mM;
    var R_supSPG: dimensionless {init: R_supSPG0};
    var k_degG: per_ms {init: 0.00125};
    var Ibar_SERCA: picoampere {init: 6.68};
    var Cl_i0: mM {init: 59.4};
    var K_r2: per__ms_x_mM_ {init: 1.05};
    var K_r1: per__ms_x_mM2_ {init: 2500.0};
    var Bbar_F: mM {init: 0.1};
    var I_PMCA: picoampere;
    var R_ClcGMPmin: dimensionless {init: 0.0132};
    var I_Kleak: picoampere;
    var k_dG: per_ms {init: 0.0015};
    var Na_i: mM {init: Na_i0};
    var Vol_SRu: picoL {init: 0.07};
    var PIP2: dimensionless {init: PIP2_0};
    var PIP2_0: dimensionless;
    PIP2_0 = PIP2_T-(1{dimensionless}+k_degG/r_rG)*gamma_G*IP3_0*1e-15{scaling_factor};
    var Na_e: mM {init: 140.0};
    var Vol_SRr: picoL {init: 0.0070};
    var Cl_i: mM {init: Cl_i0};
    var k_pG: per_ms {init: 1.0E-4};
    // set to 0 for us but the original kapela sets it to 0.0001
    // {init: 1.0E-4}
    var g_Kv: nanosiemens {init: 1.35};
    var n_HKe: dimensionless {init: 1.1};
    var Cl_e: mM {init: 129.0};
    var K_mPMCA: mM {init: 1.7E-4};
    var K_mr2: per_ms {init: 0.084};
    var K_mr1: per_ms {init: 0.0076};
    var dV_50KCacGMP: mV {init: 76.0};
    var ICa_totm: picoampere;
    var phi_R: dimensionless;
    var time: ms {pub: out};
    var g_ClCa: nanosiemens_per_picofarad {init: 0.23};
    var K_SOC: mM {init: 1.0E-4};
    var R_supSG: dimensionless {init: R_supSG0};
    var R_supSG0: dimensionless;
    R_supSG0 = R_TG*xi_G;
    var P_VOCC: cm_per_s {init: 1.88E-5};
    var IK_NSC: picoampere;
    var r_hG0: pL_mM_per_ms_mol;
    var K_dB: mM {init: 5.298E-4};
    var R_supSPG0: dimensionless {init: 0.0};
    var phi_F: dimensionless;
    var I_NCX: picoampere;
    var n_ClcGMP: dimensionless {init: 3.3};
    var V_cGMPmax: mM_per_ms {init: 1.26E-7};
    var q_2: dimensionless {init: 0.799907171783497};
    // var{q_20} q_20: dimensionless;
    var q_1: dimensionless {init: 0.799907171783497};
    //         var{q_10} q_10: dimensionless;
    //         q_10     = 1{dimensionless}/(1{dimensionless}+exp((V_m0+40{mV})/14{mV}));
    // q_20     = 1{dimensionless}/(1{dimensionless}+exp((V_m0+40{mV})/14{mV}));
    var K_2G: mM {init: 0.2};
    var N_Avo: per_mol {init: 6.022E23};
    var INa_NaKCl: picoampere;
    var K_IP3: mM {init: 1.2E-4};
    var xi_G: dimensionless {init: 0.85};
    var K_cG: mM {init: 4.0E-4};
    var k_m2sGC: per_ms {init: 1.0E-7};
    var N_BKCa: per_cm2 {init: 6600000.0};
    var r_hG: per_ms;
    var K_1G: mM {init: 0.01};
    var fbar_L: dimensionless;
    var cGMP_i0: mM {init: 0.0};
    var K_mpde: mM {init: 0.0010};
    var Sbar_CM: mM {init: 0.1};
    var I_tr: picoampere;
    var T: K {init: 293.0};
    var k_aG: per_ms {init: 1.7E-4};
    var R: coulomb_x_mV_per__K_x_mol_ {init: 8314.472};
    var Vbar_cGMP: mM_per_ms;
    var Q: dimensionless;
    var I_VOCC: picoampere;
    var G: dimensionless {init: G_0};
    var G_0: dimensionless;
    G_0 = r_hG0*(K_cG+Ca_i0)/(alpha_G*Ca_i0)*1e-15{dimensionless};
    var F: C_per_mol {init: 96485.3399};
    var IK_totm: picoampere;
    var K_NSC: mM {init: 0.0030};
    var k_onIP3: per__ms_x_mM_ {init: 1.4};
    var R_NCXcGMP: dimensionless;
    var tau_tr: ms {init: 1000.0};
    var I_ClCa: picoampere;
    var INa_SOC: picoampere;
    var K_i: mM {init: K_i0};
    var Vol_i: picoL {init: 1.0};
    var K_e: mM {init: 5.0};
    var K_actIP3: mM {init: 1.7E-4};
    var NO_0: mM {init: 1.0E-12};
    var K_ClCacGMP: mM;
    var E_Cl: mV;
    var R_NO: dimensionless;
    var d_NSCmin: dimensionless {init: 0.0244};
    var IK_NaKCl: picoampere;
    var g_Kleak: nanosiemens {init: 0.067};
    var K_dCM: mM {init: 2.6E-4};
    var PNa_NSC: cm_per_s {init: 5.11E-7};
    var E_Ca: mV;
    var C_m: picofarad {init: 25.0};
    var r_rG: per_ms {init: 1.5E-5};
    var OPtot_IP3: dimensionless;
    var L_NaKCl: mol2_per__J_x_s_x_cm2_ {init: 1.79E-17};
    var k_1sGC: per__ms_x_mM_ {init: 2000.0};
    var DAG: mM;
    var A_m: cm2;
    var R_010: dimensionless {init: 0.9955};
    var CSQNbar: mM {init: 15.0};
    var IP3_0: mM {init: 0.0};
    var deltaG_0: dimensionless;
    var PIP2_T: dimensionless {init: 5.0E7};
    var E_K: mV;
    var p_s: dimensionless {init: p_s0};
    var p_s0: dimensionless;
    p_s0 = 1{dimensionless}/(1{dimensionless}+exp((V_m0-V_50KCa0)/18.25{mV}*(-1{dimensionless})));
    var z_K: dimensionless {init: 1.0};
    gamma_G = N_Avo*Vol_i;
    var RT: coulomb_millivolt_per_mol;
    RT = R*T;
    F_per_RT = F/RT;
    A_m = C_m/1e6{picofarad_per_cm2};
    PK_NSC = PNa_NSC*1.06{dimensionless};
    PCa_NSC = PNa_NSC*4.54{dimensionless};
    Q = pow(Q_10, (T-309.15{K})/10{K});
    B5_sGC = k_2sGC/k_3sGC;
    A0_sGC = ((k_m1sGC+k_2sGC)*k_DsGC+k_m1sGC*k_m2sGC)/(k_1sGC*k_3sGC);
    A1_sGC = ((k_1sGC+k_3sGC)*k_DsGC+(k_2sGC+k_m2sGC)*k_1sGC)/(k_1sGC*k_3sGC);
    ode(R_supSG, time) = k_rG*xi_G*R_TG-(k_rG+k_pG*NE/(K_1G+NE))*R_supSG-k_rG*R_supSPG;
    ode(V_m, time) = 1{dimensionless}/C_m*((I_VOCC+I_BKCa+I_Kv+I_Kleak+I_NSC+I_SOC+I_ClCa+I_PMCA+I_NCX+I_NaK)*(-1{dimensionless})+I_stim);
    // Na_K_Cl channel is electronuetral so not included in the membrane potential calculation
    ode(R_supSPG, time) = NE*(k_pG*R_supSG/(K_1G+NE)-k_eG*R_supSPG/(K_2G+NE));
    ode(IP3, time) = (r_hG*PIP2/gamma_G-k_degG*IP3*1e-15{peta_SF})*1e15{femto_SF};
    // Issue 0 is a WARNING:
    // Description: The units in 'r_hG*PIP2/gamma_G-k_degG*IP3*1.0e-15' in '(r_hG*PIP2/gamma_G-k_degG*IP3*1.0e-15)*1.0e15' in equation 'dIP3/dtime = (r_hG*PIP2/gamma_G-k_degG*IP3*1.0e-15)*1.0e15' in component 'Kapela' are not equivalent. 'r_hG*PIP2/gamma_G' is in 'per_ms x picoL_per_mol^-1' (i.e. '10^18 x metre^-3 x mole x second^-1') while 'k_degG*IP3*1.0e-15' is in 'mM x per_ms' (i.e. '10^3 x metre^-3 x mole x second^-1').
    //  original ode(IP3, time)      = (r_hG*PIP2/gamma_G-k_degG*IP3*1e-15{dimensionless})*1e15{dimensionless};  not sure if peta_SF if the answer
    // FOLLOWING THE PREVIOUS FIX WE GET THE ERROR BELOW
    // Issue 0 is a WARNING:
    // Description: The units in 'dIP3/dtime = (r_hG*PIP2/gamma_G-k_degG*IP3*1.0e-15)*1.0e15' in component 'Kapela' are not equivalent. 'dIP3/dtime' is in 'mM x ms^-1' (i.e. '10^3 x metre^-3 x mole x second^-1') while '(r_hG*PIP2/gamma_G-k_degG*IP3*1.0e-15)*1.0e15' is in 'per_ms x picoL_per_mol^-1' (i.e. '10^18 x metre^-3 x mole x second^-1').
    // HENCE WE MAKE THE 1E15 (FEMTO_SF)
    ode(PIP2, time) = (r_hG+r_rG)*PIP2*(-1{dimensionless})-r_rG*gamma_G*IP3*1e-15{peta_SF}+r_rG*PIP2_T;
    ode(G, time) = k_aG*(deltaG_0+rho_rG)*(G_TG-G)-k_dG*G;
    ode(d_L, time) = (dbar_L-d_L)/tau_dL;
    ode(f_L, time) = (fbar_L-f_L)/tau_fL;
    ode(Ca_i, time) = (ICa_totm+I_SERCA-I_rel-I_IP3)/(z_Ca*F*Vol_Ca)/(1{dimensionless}+Sbar_CM*K_dCM/sqr(K_dCM+Ca_i)+Bbar_F*K_dB/sqr(K_dB+Ca_i))*(-1{dimensionless});
    ode(p_f, time) = (pbar_o-p_f)/tau_pf;
    ode(V_cGMP, time) = 0{dimensionless};
    // (Vbar_cGMP-V_cGMP)/tau_sGC;
    ode(p_s, time) = (pbar_o-p_s)/tau_ps;
    ode(cGMP_i, time) = V_cGMP-k_pdecGMP*sqr(cGMP_i)/(cGMP_i+K_mpde);
    ode(Na_i, time) = INa_totm/(F*Vol_i)*(-1{dimensionless});
    ode(K_i, time) = IK_totm/(F*Vol_i)*(-1{dimensionless});
    ode(Cl_i, time) = ICl_totm/(z_Cl*F*Vol_i)*(-1{dimensionless});
    E_K = 1{dimensionless}/(z_K*F_per_RT)*ln(K_e/K_i);
    ode(p_K, time) = (pbar_K-p_K)/tau_pK;
    ode(q_1, time) = (qbar-q_1)/tau_q1;
    ode(q_2, time) = (qbar-q_2)/tau_q2;
    ode(P_SOC, time) = (Pbar_SOC-P_SOC)/tau_SOC;
    E_Na = 1{dimensionless}/(z_Na*F_per_RT)*ln(Na_e/Na_i);
    ode(h_IP3, time) = k_onIP3*(K_inhIP3-(Ca_i+K_inhIP3)*h_IP3);
    E_Ca = 1{dimensionless}/(z_Ca*F_per_RT)*ln(Ca_e/Ca_i);
    E_Cl = 1{dimensionless}/(z_Cl*F_per_RT)*ln(Cl_e/Cl_i);
    dbar_L = 1{dimensionless}/(1{dimensionless}+exp(V_m/8.3{mV}*(-1{dimensionless})));
    fbar_L = 1{dimensionless}/(1{dimensionless}+exp((V_m+42{mV})/9.1{mV}));
    tau_dL = 2.5{ms}*exp(sqr((V_m+40{mV})/30{mV})*(-1{dimensionless}))+1.15{ms};
    tau_fL = 65{ms}*exp(sqr((V_m+35{mV})/25{mV})*(-1{dimensionless}))+45{ms};
    I_VOCC = A_m*P_VOCC*d_L*f_L*V_m*sqr(z_Ca)*F*F_per_RT*(Ca_e-Ca_i*exp(V_m*z_Ca*F_per_RT))/(1{dimensionless}-exp(V_m*z_Ca*F_per_RT))*1e6{micro_SF};
    P_KCa = p_f*.17{dimensionless}+p_s*.83{dimensionless};
    i_KCa = P_BKCa*V_m*F*F_per_RT*(K_e-K_i*exp(V_m*F_per_RT))/(1{dimensionless}-exp(V_m*F_per_RT))*1e6{micro_SF};
    ode(Ca_u, time) = (I_SERCA-I_tr-I_IP3)/(z_Ca*F*Vol_SRu);
    ode(Ca_r, time) = (I_tr-I_rel)/(z_Ca*F*Vol_SRr)/(1{dimensionless}+CSQNbar*K_CSQN/sqr(K_CSQN+Ca_r));
    ode(R_10, time) = K_r1*sqr(Ca_i)*R_00-(K_mr1+K_r2*Ca_i)*R_10+K_mr2*R_11;
    ode(R_11, time) = K_r2*Ca_i*R_10-(K_mr1+K_mr2)*R_11+K_r1*sqr(Ca_i)*R_01;
    R_NO = NO/(NO+2e-4{mM});
    ode(R_01, time) = K_r2*Ca_i*R_00+K_mr1*R_11-(K_mr2+K_r1*sqr(Ca_i))*R_01;
    R_cGMP = sqr(cGMP_i)/(sqr(cGMP_i)+sqr(.0015{mM}));
    V_50KCa = 41.7{mV}*log(Ca_i/1{mM})*(-1{dimensionless})-128.2{mV}-dV_50KCaNO*R_NO-dV_50KCacGMP*R_cGMP;
    pbar_o = 1{dimensionless}/(1{dimensionless}+exp((V_m-V_50KCa)/18.25{mV}*(-1{dimensionless})));
    I_BKCa = A_m*N_BKCa*P_KCa*i_KCa;
    pbar_K = 1{dimensionless}/(1{dimensionless}+exp((V_m+11{mV})/15{mV}*(-1{dimensionless})));
    qbar = 1{dimensionless}/(1{dimensionless}+exp((V_m+40{mV})/14{mV}));
    tau_pK = 61.49{ms}*exp(-0.0268{per_mV}*V_m);
    I_Kv = g_Kv*p_K*(q_1*.45{dimensionless}+q_2*.55{dimensionless})*(V_m-E_K);
    I_Kleak = g_Kleak*(V_m-E_K);
    Po_NSC = .4344{dimensionless}+.5656{dimensionless}/(1{dimensionless}+exp((V_m-47.12{mV})/24.24{mV}*(-1{dimensionless})));
    DAG = IP3;
    INa_NSC = A_m*(DAG/(DAG+K_NSC)+d_NSCmin)*Po_NSC*PNa_NSC*V_m*F*F_per_RT*(Na_e-Na_i*exp(V_m*F_per_RT))/(1{dimensionless}-exp(V_m*F_per_RT))*1e6{micro_SF};
    IK_NSC = A_m*(DAG/(DAG+K_NSC)+d_NSCmin)*Po_NSC*PK_NSC*V_m*F*F_per_RT*(K_e-K_i*exp(V_m*F_per_RT))/(1{dimensionless}-exp(V_m*F_per_RT))*1e6{micro_SF};
    ICa_NSC = A_m*d_NSCmin*Po_NSC*PCa_NSC*V_m*sqr(z_Ca)*F*F_per_RT*(Ca_e-Ca_i*exp(z_Ca*V_m*F_per_RT))/(1{dimensionless}-exp(z_Ca*V_m*F_per_RT))*1e6{micro_SF};
    I_NSC = INa_NSC+IK_NSC+ICa_NSC;
    Pbar_SOC = 1{dimensionless}/(1{dimensionless}+Ca_u/K_SOC);
    INa_SOC = gNa_SOC*P_SOC*(V_m-E_Na);
    ICa_SOC = gCa_SOC*P_SOC*(V_m-E_Ca);
    I_SOC = INa_SOC+ICa_SOC;
    alpha_Cl = pow(cGMP_i/1{mM}, n_ClcGMP)/(pow(cGMP_i/1{mM}, n_ClcGMP)+pow(K_ClcGMP/1{mM}, n_ClcGMP));
    K_ClCacGMP = (1{dimensionless}-alpha_Cl*.9{dimensionless})*4e-4{mM};
    P_Cl = R_ClcGMPmin*pow(Ca_i/1{mM}, n_ClCa)/(pow(Ca_i/1{mM}, n_ClCa)+pow(K_ClCa/1{mM}, n_ClCa))+alpha_Cl*pow(Ca_i/1{mM}, n_ClCa)/(pow(Ca_i/1{mM}, n_ClCa)+pow(K_ClCacGMP/1{mM}, n_ClCa));
    I_ClCa = C_m*g_ClCa*P_Cl*(V_m-E_Cl);
    I_PMCA = Ibar_PMCA*Ca_i/(Ca_i+K_mPMCA);
    R_NCXcGMP = 1{dimensionless}+cGMP_i/(cGMP_i+.045{mM})*.55{dimensionless};
    phi_F = exp(gamma_NCX*V_m*F_per_RT);
    phi_R = exp((gamma_NCX-1{dimensionless})*V_m*F_per_RT);
    I_NCX = g_NCX*R_NCXcGMP*(pow(Na_i, 3{dimensionless})*Ca_e*phi_F-pow(Na_e, 3{dimensionless})*Ca_i*phi_R)/(1{mM4}+d_NCX*(pow(Na_e, 3{dimensionless})*Ca_i+pow(Na_i, 3{dimensionless})*Ca_e));
    I_NaK = C_m*Ibar_NaK*Q*pow(K_e/1{mM}, n_HKe)/(pow(K_e/1{mM}, n_HKe)+pow(K_dKe/1{mM}, n_HKe))*pow(Na_i/1{mM}, n_HNai)/(pow(Na_i/1{mM}, n_HNai)+pow(Na_dNai/1{mM}, n_HNai))*(V_m+150{mV})/(V_m+200{mV});
    R_NaKClcGMP = 1{dimensionless}+cGMP_i/(cGMP_i+.0064{mM})*3.5{dimensionless};
    ICl_NaKCl = R_NaKClcGMP*z_Cl*A_m*L_NaKCl*F*R*T*log(Na_e/Na_i*K_e/K_i*sqr(Cl_e/Cl_i))*(-1e9{nano_SF});
    INa_NaKCl = ICl_NaKCl*(-0.5{dimensionless});
    IK_NaKCl = ICl_NaKCl*(-0.5{dimensionless});
    OPtot_IP3 = pow(IP3/(IP3+K_IP3)*Ca_i/(Ca_i+K_actIP3)*h_IP3, 3{dimensionless});
    I_IP3 = Ibar_IP3*z_Ca*Vol_Ca*F*OPtot_IP3*(Ca_u-Ca_i);
    I_SERCA = Ibar_SERCA*Ca_i/(Ca_i+K_mup);
    I_tr = (Ca_u-Ca_r)*z_Ca*F*Vol_SRu/tau_tr;
    I_rel = (sqr(R_10)+R_leak)*(Ca_r-Ca_i)*z_Ca*F*Vol_SRr/tau_rel;
    R_00 = 1{dimensionless}-R_10-R_11-R_01;
    r_hG0 = k_degG*gamma_G*IP3_0/50000000{dimensionless};
    // this is divided by PIP2_0, initial PIP2 so if we change the initial PIP2 we need to change it
    rho_rG = NE*R_supSG/(xi_G*R_TG*(K_1G+NE));
    r_hG = alpha_G*Ca_i/(Ca_i+K_cG)*G;
    Vbar_cGMP = V_cGMPmax*(B5_sGC*NO+sqr(NO))/(A0_sGC+A1_sGC*NO+sqr(NO));
    tau_sGC = sel
      case (Vbar_cGMP-V_cGMP == 0{mM_per_ms}) or (Vbar_cGMP-V_cGMP > 0{mM_per_ms}):
        1{dimensionless}/(k_3sGC*NO+k_DrsGC);
      otherwise:
        1{dimensionless}/(k_m2sGC+k_DrsGC);
    endsel;
    ICa_totm = ICa_SOC+I_VOCC-I_NCX*2{dimensionless}+I_PMCA+ICa_NSC;
    INa_totm = INa_NaKCl+INa_SOC+I_NaK*3{dimensionless}+I_NCX*3{dimensionless}+INa_NSC;
    IK_totm = IK_NaKCl+I_BKCa+I_Kv+IK_NSC+I_Kleak-I_NaK*2{dimensionless};
    ICl_totm = ICl_NaKCl+I_ClCa;
    NO = 0{mM};
    // NO = sel
    //     case (time < 70000{ms}) or (time == 150000{ms}) or (time > 150000{ms}):
    //         0{mM};
    //     otherwise:
    //         0.001{mM};
    // endsel;
    // NE = 3e-7{mM};
    NE = sel
      case (time < 10000{ms}) or (time == 70000{ms}) or (time > 70000{ms}):
        0{mM};
      otherwise:
        0.001{mM};
    endsel;
    // oscillation reprodcution
    // K_e = sel
    //     case time < 75000{ms}:
    //         5{mM};
    //     case time < 368000{ms}:
    //         10{mM};
    //     case time < 568000{ms}:
    //         15{mM};
    //     case time < 944000{ms}:
    //         20{mM};
    //     case time < 1233000{ms}:
    //         25{mM};
    //     case time < 1518000{ms}:
    //         30{mM};
    //     otherwise:
    //         5{mM};
    // endsel;
    // NE_amp;
    deltaG_0 = k_dG*0{dimensionless}/(k_aG*(G_TG-0{dimensionless}));
    I_stim = sel
      case (time == 0{ms}) or (time > 0{ms}):
        0{picoampere};
      otherwise:
        0{picoampere};
    endsel;
    // Istim_amp;
    R_NO0 = NO_0/(NO_0+2e-4{mM});
    R_cGMP0 = sqr(cGMP_i0)/(sqr(cGMP_i0)+sqr(5.5e-4{uM})*1e-6{mega_SF});
    V_50KCa0 = -41.7{mV}*log(Ca_i0/1{mM})-128.2{mV}-dV_50KCaNO*R_NO0-dV_50KCacGMP*R_cGMP0;
  enddef;
enddef;
