def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit J_per_MK as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_M as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_M_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit Farad as
    unit coulomb;
    unit volt {expo: -1};
  enddef;
  def unit picofarad as
    unit farad {pref: pico};
  enddef;
  def unit per__ms_x_mM2_ as
    unit ms {expo: -1};
    unit mM {expo: -2};
  enddef;
  def unit nanosiemens as
    unit siemens {pref: nano};
  enddef;
  def unit coulomb_x_mV_per__K_x_mol_ as
    unit coulomb;
    unit volt {pref: milli};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit mV_per_msec as
    unit ampere {expo: -1};
    unit kilogram;
    unit metre {expo: 2};
    unit second {expo: -4};
  enddef;
  def unit per_cm2 as
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit per_msec as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_mV as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit mol2_per__J_x_s_x_cm2_ as
    unit second {expo: -1};
    unit mole {expo: 2};
    unit joule {expo: -1};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit picoampere as
    unit ampere {pref: pico};
  enddef;
  def unit msec as
    unit second {pref: milli};
  enddef;
  def unit nanosiemens_per_picofarad as
    unit nanosiemens;
    unit picofarad {expo: -1};
  enddef;
  def unit cm_per_s as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit per__ms_x_mM_ as
    unit ms {expo: -1};
    unit mM {expo: -1};
  enddef;
  def unit mM2 as
    unit mM {expo: 2};
  enddef;
  def unit cm3_per_s as
    unit second {expo: -1};
    unit metre {expo: 3, pref: centi};
  enddef;
  def unit K as
    unit kelvin;
  enddef;
  def unit picoampere_per_picofarad as
    unit ampere {pref: pico};
    unit picofarad {expo: -1};
  enddef;
  def unit picofarad_per_cm2 as
    unit picofarad;
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit coulomb_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit coulomb_mV_per_mol as
    unit coulomb;
    unit volt {pref: milli};
    unit mole {expo: -1};
  enddef;
  def unit J_per_millimol_K as
    unit joule;
    unit mole {expo: -1, pref: milli};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_millivolt_per_mol as
    unit coulomb;
    unit volt {pref: milli};
    unit mole {expo: -1};
  enddef;
  def unit picoL_per_mol as
    unit mole {expo: -1};
    unit litre {pref: pico};
  enddef;
  def unit femto_SF as
    unit volt {pref: femto};
    unit volt {expo: -1};
  enddef;
  def unit picoL as
    unit litre {pref: pico};
  enddef;
  def unit pL_mM_per_ms_mol as
    unit picoL;
    unit mM;
    unit ms {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit peta_SF as
    unit volt {pref: peta};
    unit volt {expo: -1};
  enddef;
  def unit micro_SF as
    unit volt {pref: micro};
    unit volt {expo: -1};
  enddef;
  def unit nano_SF as
    unit volt {pref: nano};
    unit volt {expo: -1};
  enddef;
  def unit mega_SF as
    unit volt {pref: mega};
    unit volt {expo: -1};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit picoampere_s_per_cm as
    unit picoampere;
    unit second;
    unit cm {expo: -1};
  enddef;
  def unit mM_per_ms_1 as
    unit mol_per_m3;
    unit millis {expo: -1};
  enddef;
  def unit per__ms_x_mM__1 as
    unit millis {expo: -1};
    unit mol_per_m3 {expo: -1};
  enddef;
  def unit picoampere_per_picofarad_1 as
    unit ampere {pref: pico};
    unit picofarad {expo: -1};
  enddef;
  def unit per__ms_x_mM2__1 as
    unit millis {expo: -1};
    unit mol_per_m3 {expo: -2};
  enddef;
  def unit nanosiemens_per_picofarad_1 as
    unit nS;
    unit picofarad {expo: -1};
  enddef;
  def unit per__ms_x_mM__2 as
    unit millis {expo: -1};
    unit mol_per_m3 {expo: -1};
  enddef;
  def unit mM2_1 as
    unit mol_per_m3 {expo: 2};
  enddef;
  def unit picoampere_per_picofarad_2 as
    unit ampere {pref: pico};
    unit picofarad {expo: -1};
  enddef;
  def unit per__ms_x_mM2__2 as
    unit millis {expo: -1};
    unit mol_per_m3 {expo: -2};
  enddef;
  def unit nanosiemens_per_picofarad_2 as
    unit nS;
    unit picofarad {expo: -1};
  enddef;
  def unit pL_mM_per_ms_mol_1 as
    unit picoL;
    unit mol_per_m3;
    unit millis {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit mM_per_ms_2 as
    unit mol_per_m3;
    unit millis {expo: -1};
  enddef;
  def unit mM4_1 as
    unit mol_per_m3 {expo: 4};
  enddef;
  def unit picofarad_per_cm2_1 as
    unit picofarad;
    unit metre {expo: -2, pref: centi};
  enddef;

  def comp parameters as
    var K_CSQN_Kapela: mol_per_m3 {init: 0.8, interface: public};
    var d_NCX_Kapela: dimensionless {init: 0.0003, interface: public};
    var G_TG_Kapela: dimensionless {init: 100000, interface: public};
    var k_DsGC_Kapela: per_ms {init: 0.0004, interface: public};
    var K_ClcGMP_Kapela: mol_per_m3 {init: 0.0064, interface: public};
    var k_pdecGMP_Kapela: per_ms {init: 0.0000695, interface: public};
    var Q_10_Kapela: dimensionless {init: 1.87, interface: public};
    var k_DrsGC_Kapela: per_ms {init: 0.0001, interface: public};
    var tau_SOC_Kapela: millis {init: 100, interface: public};
    var Ca_u_init_Kapela: mol_per_m3 {init: 0.66, interface: public};
    var Ca_r_init_Kapela: mol_per_m3 {init: 0.57, interface: public};
    var k_2sGC_Kapela: per_ms {init: 0.0000064, interface: public};
    var Istim_amp_Kapela: nSmV {init: 0, interface: public};
    var dV_50KCaNO_Kapela: milliV {init: 46.3, interface: public};
    var tau_ps_Kapela: millis {init: 35.9, interface: public};
    var Ca_i_init_Kapela: mol_per_m3 {init: 0.000068, interface: public};
    var R_leak_Kapela: dimensionless {init: 0.0000107, interface: public};
    var g_NCX_Kapela: nSmV {init: 0.000487, interface: public};
    var Ca_e_Kapela: mol_per_m3 {init: 2, interface: public};
    var K_mup_Kapela: mol_per_m3 {init: 0.001, interface: public};
    var K_dKe_Kapela: mol_per_m3 {init: 1.6, interface: public};
    var P_SOC_init_Kapela: dimensionless {init: 0, interface: public};
    var tau_pf_Kapela: millis {init: 0.84, interface: public};
    var Vol_Ca_Kapela: picoL {init: 0.7, interface: public};
    var gNa_SOC_Kapela: nS {init: 0.0575, interface: public};
    var V_cGMP_init_Kapela: mM_per_ms_1 {init: 0, interface: public};
    var IP3_init_Kapela: mol_per_m3 {init: 0, interface: public};
    var Ibar_PMCA_Kapela: nSmV {init: 5.37, interface: public};
    var K_inhIP3_Kapela: mol_per_m3 {init: 0.0001, interface: public};
    var V_m_init_Kapela: milliV {init: -59.4, interface: public};
    var gamma_NCX_Kapela: dimensionless {init: 0.45, interface: public};
    var P_BKCa_Kapela: cm3_per_s {init: 3.9E-13, interface: public};
    var tau_q2_Kapela: millis {init: 2884, interface: public};
    var tau_q1_Kapela: millis {init: 371, interface: public};
    var Na_dNai_Kapela: mol_per_m3 {init: 22, interface: public};
    var R_11_init_Kapela: dimensionless {init: 0.000004, interface: public};
    var R_10_init_Kapela: dimensionless {init: 0.0033, interface: public};
    var V_m0_Kapela: milliV {init: -59.4, interface: public};
    var n_HNai_Kapela: dimensionless {init: 1.7, interface: public};
    var alpha_G_Kapela: per_ms {init: 0.00000002781, interface: public};
    var k_3sGC_Kapela: per__ms_x_mM__1 {init: 4.2, interface: public};
    var z_Cl_Kapela: dimensionless {init: -1, interface: public};
    var gCa_SOC_Kapela: nS {init: 0.0083, interface: public};
    var K_ClCa_Kapela: mol_per_m3 {init: 0.000365, interface: public};
    var Ibar_IP3_Kapela: per_ms {init: 0.00288, interface: public};
    var R_01_init_Kapela: dimensionless {init: 0.9955, interface: public};
    var z_Ca_Kapela: dimensionless {init: 2, interface: public};
    var Ibar_NaK_Kapela: picoampere_per_picofarad_1 {init: 2.3083, interface: public};
    var k_rG_Kapela: per_ms {init: 0.000000175, interface: public};
    var n_ClCa_Kapela: dimensionless {init: 2, interface: public};
    var R_TG_Kapela: dimensionless {init: 20000, interface: public};
    var k_eG_Kapela: per_ms {init: 0.000006, interface: public};
    var tau_rel_Kapela: millis {init: 0.0333, interface: public};
    var cGMP_i_init_Kapela: mol_per_m3 {init: 0, interface: public};
    var k_m1sGC_Kapela: per_ms {init: 0.015, interface: public};
    var z_Na_Kapela: dimensionless {init: 1, interface: public};
    var R_supSPG_init_Kapela: dimensionless {init: 0, interface: public};
    var k_degG_Kapela: per_ms {init: 0.00125, interface: public};
    var Ibar_SERCA_Kapela: nSmV {init: 6.68, interface: public};
    var K_r2_Kapela: per__ms_x_mM__1 {init: 1.05, interface: public};
    var K_r1_Kapela: per__ms_x_mM2__1 {init: 2500, interface: public};
    var Bbar_F_Kapela: mol_per_m3 {init: 0.1, interface: public};
    var R_ClcGMPmin_Kapela: dimensionless {init: 0.0132, interface: public};
    var k_dG_Kapela: per_ms {init: 0.0015, interface: public};
    var Na_i_init_Kapela: mol_per_m3 {init: 8.4, interface: public};
    var Vol_SRu_Kapela: picoL {init: 0.07, interface: public};
    var Na_e_Kapela: mol_per_m3 {init: 140, interface: public};
    var Vol_SRr_Kapela: picoL {init: 0.007, interface: public};
    var Cl_i_init_Kapela: mol_per_m3 {init: 59.4, interface: public};
    var k_pG_Kapela: per_ms {init: 0, interface: public};
    var n_HKe_Kapela: dimensionless {init: 1.1, interface: public};
    var Cl_e_Kapela: mol_per_m3 {init: 129, interface: public};
    var K_mPMCA_Kapela: mol_per_m3 {init: 0.00017, interface: public};
    var K_mr2_Kapela: per_ms {init: 0.084, interface: public};
    var K_mr1_Kapela: per_ms {init: 0.0076, interface: public};
    var dV_50KCacGMP_Kapela: milliV {init: 76, interface: public};
    var g_ClCa_Kapela: nanosiemens_per_picofarad_1 {init: 0.23, interface: public};
    var K_SOC_Kapela: mol_per_m3 {init: 0.0001, interface: public};
    var P_VOCC_Kapela: cm_per_s {init: 0.0000188, interface: public};
    var K_dB_Kapela: mol_per_m3 {init: 0.0005298, interface: public};
    var n_ClcGMP_Kapela: dimensionless {init: 3.3, interface: public};
    var V_cGMPmax_Kapela: mM_per_ms_1 {init: 0.000000126, interface: public};
    var K_2G_Kapela: mol_per_m3 {init: 0.2, interface: public};
    var N_Avo_Kapela: per_mol {init: 6.022E+023, interface: public};
    var K_IP3_Kapela: mol_per_m3 {init: 0.00012, interface: public};
    var xi_G_Kapela: dimensionless {init: 0.85, interface: public};
    var K_cG_Kapela: mol_per_m3 {init: 0.0004, interface: public};
    var k_m2sGC_Kapela: per_ms {init: 0.0000001, interface: public};
    var NE_amp_Kapela: mol_per_m3 {init: 0.001, interface: public};
    var N_BKCa_Kapela: per_cm2 {init: 6600000, interface: public};
    var K_1G_Kapela: mol_per_m3 {init: 0.01, interface: public};
    var K_mpde_Kapela: mol_per_m3 {init: 0.001, interface: public};
    var Sbar_CM_Kapela: mol_per_m3 {init: 0.1, interface: public};
    var T_Kapela: K {init: 293, interface: public};
    var k_aG_Kapela: per_ms {init: 0.00017, interface: public};
    var R_Kapela: coulomb_x_mV_per__K_x_mol_ {init: 8314.472, interface: public};
    var F_Kapela: C_per_mol {init: 96485.3399, interface: public};
    var K_NSC_Kapela: mol_per_m3 {init: 0.003, interface: public};
    var k_onIP3_Kapela: per__ms_x_mM__1 {init: 1.4, interface: public};
    var tau_tr_Kapela: millis {init: 1000, interface: public};
    var K_i_init_Kapela: mol_per_m3 {init: 140, interface: public};
    var Vol_i_Kapela: picoL {init: 1, interface: public};
    var K_e_Kapela: mol_per_m3 {init: 5, interface: public};
    var K_actIP3_Kapela: mol_per_m3 {init: 0.00017, interface: public};
    var NO_0_Kapela: mol_per_m3 {init: 1E-12, interface: public};
    var d_NSCmin_Kapela: dimensionless {init: 0.0244, interface: public};
    var g_Kleak_Kapela: nS {init: 0.067, interface: public};
    var K_dCM_Kapela: mol_per_m3 {init: 0.00026, interface: public};
    var PNa_NSC_Kapela: cm_per_s {init: 0.000000511, interface: public};
    var C_m_Kapela: picofarad {init: 25, interface: public};
    var r_rG_Kapela: per_ms {init: 0.000015, interface: public};
    var L_NaKCl_Kapela: mol2_per__J_x_s_x_cm2_ {init: 1.79E-17, interface: public};
    var k_1sGC_Kapela: per__ms_x_mM__1 {init: 2000, interface: public};
    var CSQNbar_Kapela: mol_per_m3 {init: 15, interface: public};
    var IP3_0_Kapela: mol_per_m3 {init: 0, interface: public};
    var PIP2_T_Kapela: dimensionless {init: 50000000, interface: public};
    var G_k15_Kapela: nS {init: 1.8, interface: public};
    var G_k21_Kapela: nS {init: 0.7, interface: public};
    var z_K_Kapela: dimensionless {init: 1, interface: public};
  enddef;

  def comp parameters_global as
  enddef;

  def comp environment as
    var time: ms {interface: public};
  enddef;

  def comp Kapela_module as
    var ICa_SOC: nSmV {interface: public};
    var K_CSQN: mol_per_m3 {interface: public};
    var E_Na: milliV {interface: public};
    var d_NCX: dimensionless {interface: public};
    var G_TG: dimensionless {interface: public};
    var I_SERCA: nSmV {interface: public};
    var k_DsGC: per_ms {interface: public};
    var V_50KCa0: milliV {interface: public};
    var I_stim: nSmV {interface: public};
    var INa_NSC: nSmV {interface: public};
    var K_ClcGMP: mol_per_m3 {interface: public};
    var tau_fL: millis {interface: public};
    var k_pdecGMP: per_ms {interface: public};
    var Q_10: dimensionless {interface: public};
    var A1_sGC: mol_per_m3 {interface: public};
    var i_KCa: nSmV {interface: public};
    var k_DrsGC: per_ms {interface: public};
    var tau_SOC: millis {interface: public};
    var Ca_u_init: mol_per_m3 {interface: public};
    var Ca_r_init: mol_per_m3 {interface: public};
    var k_2sGC: per_ms {interface: public};
    var PCa_NSC: cm_per_s {interface: public};
    var Istim_amp: nSmV {interface: public};
    var dV_50KCaNO: milliV {interface: public};
    var ICl_NaKCl: nSmV {interface: public};
    var P_KCa: dimensionless {interface: public};
    var tau_ps: millis {interface: public};
    var Ca_i_init: mol_per_m3 {interface: public};
    var V_50KCa: milliV {interface: public};
    var R_leak: dimensionless {interface: public};
    var I_SOC: nSmV {interface: public};
    var g_NCX: nSmV {interface: public};
    var Ca_e: mol_per_m3 {interface: public};
    var K_mup: mol_per_m3 {interface: public};
    var R_cGMP: dimensionless {interface: public};
    var K_dKe: mol_per_m3 {interface: public};
    var tau_pf: millis {interface: public};
    var Vol_Ca: picoL {interface: public};
    var gNa_SOC: nS {interface: public};
    var dbar_L: dimensionless {interface: public};
    var Ibar_PMCA: nSmV {interface: public};
    var I_IP3: nSmV {interface: public};
    var ICa_NSC: nSmV {interface: public};
    var pbar_o: dimensionless {interface: public};
    var K_inhIP3: mol_per_m3 {interface: public};
    var B5_sGC: mol_per_m3 {interface: public};
    var R_NO0: dimensionless {interface: public};
    var tau_dL: millis {interface: public};
    var V_m_init: milliV {interface: public};
    var I_NaK: nSmV {interface: public};
    var gamma_NCX: dimensionless {interface: public};
    var P_BKCa: cm3_per_s {interface: public};
    var tau_q2: millis {interface: public};
    var tau_q1: millis {interface: public};
    var alpha_Cl: dimensionless {interface: public};
    var P_Cl: dimensionless {interface: public};
    var Po_NSC: dimensionless {interface: public};
    var R_cGMP0: dimensionless {interface: public};
    var Na_dNai: mol_per_m3 {interface: public};
    var R_10_init: dimensionless {interface: public};
    var V_m0: milliV {interface: public};
    var pbar_K: dimensionless {interface: public};
    var n_HNai: dimensionless {interface: public};
    var rho_rG: dimensionless {interface: public};
    var gamma_G: picoL_per_mol {interface: public};
    var alpha_G: per_ms {interface: public};
    var k_3sGC: per__ms_x_mM__2 {interface: public};
    var z_Cl: dimensionless {interface: public};
    var gCa_SOC: nS {interface: public};
    var K_ClCa: mol_per_m3 {interface: public};
    var R_NaKClcGMP: dimensionless {interface: public};
    var A0_sGC: mM2_1 {interface: public};
    var Ibar_IP3: per_ms {interface: public};
    var R_01_init: dimensionless {interface: public};
    var INa_totm: nSmV {interface: public};
    var R_00: dimensionless {interface: public};
    var z_Ca: dimensionless {interface: public};
    var I_NSC: nSmV {interface: public};
    var Ibar_NaK: picoampere_per_picofarad_2 {interface: public};
    var k_rG: per_ms {interface: public};
    var n_ClCa: dimensionless {interface: public};
    var R_TG: dimensionless {interface: public};
    var PK_NSC: cm_per_s {interface: public};
    var ICl_totm: nSmV {interface: public};
    var I_BKCa: nSmV {interface: public};
    var qbar: dimensionless {interface: public};
    var k_eG: per_ms {interface: public};
    var tau_rel: millis {interface: public};
    var cGMP_i_init: mol_per_m3 {interface: public};
    var NO: mol_per_m3 {interface: public};
    var k_m1sGC: per_ms {interface: public};
    var tau_sGC: millis {interface: public};
    var Pbar_SOC: dimensionless {interface: public};
    var I_rel: nSmV {interface: public};
    var F_per_RT: per_mV {interface: public};
    var z_Na: dimensionless {interface: public};
    var NE: mol_per_m3 {interface: public};
    var R_supSPG_init: dimensionless {interface: public};
    var k_degG: per_ms {interface: public};
    var Ibar_SERCA: nSmV {interface: public};
    var K_r2: per__ms_x_mM__2 {interface: public};
    var K_r1: per__ms_x_mM2__2 {interface: public};
    var Bbar_F: mol_per_m3 {interface: public};
    var I_PMCA: nSmV {interface: public};
    var R_ClcGMPmin: dimensionless {interface: public};
    var I_Kleak: nSmV {interface: public};
    var k_dG: per_ms {interface: public};
    var Na_i_init: mol_per_m3 {interface: public};
    var Vol_SRu: picoL {interface: public};
    var Na_e: mol_per_m3 {interface: public};
    var Vol_SRr: picoL {interface: public};
    var Cl_i_init: mol_per_m3 {interface: public};
    var k_pG: per_ms {interface: public};
    var n_HKe: dimensionless {interface: public};
    var Cl_e: mol_per_m3 {interface: public};
    var K_mPMCA: mol_per_m3 {interface: public};
    var K_mr2: per_ms {interface: public};
    var K_mr1: per_ms {interface: public};
    var dV_50KCacGMP: milliV {interface: public};
    var ICa_totm: nSmV {interface: public};
    var phi_R: dimensionless {interface: public};
    var t: millis {interface: public};
    var g_ClCa: nanosiemens_per_picofarad_2 {interface: public};
    var K_SOC: mol_per_m3 {interface: public};
    var P_VOCC: cm_per_s {interface: public};
    var IK_NSC: nSmV {interface: public};
    var r_hG0: pL_mM_per_ms_mol_1 {interface: public};
    var K_dB: mol_per_m3 {interface: public};
    var phi_F: dimensionless {interface: public};
    var I_NCX: nSmV {interface: public};
    var n_ClcGMP: dimensionless {interface: public};
    var V_cGMPmax: mM_per_ms_2 {interface: public};
    var K_2G: mol_per_m3 {interface: public};
    var N_Avo: per_mol {interface: public};
    var INa_NaKCl: nSmV {interface: public};
    var K_IP3: mol_per_m3 {interface: public};
    var xi_G: dimensionless {interface: public};
    var K_cG: mol_per_m3 {interface: public};
    var k_m2sGC: per_ms {interface: public};
    var NE_amp: mol_per_m3 {interface: public};
    var N_BKCa: per_cm2 {interface: public};
    var r_hG: per_ms {interface: public};
    var K_1G: mol_per_m3 {interface: public};
    var fbar_L: dimensionless {interface: public};
    var K_mpde: mol_per_m3 {interface: public};
    var Sbar_CM: mol_per_m3 {interface: public};
    var I_tr: nSmV {interface: public};
    var T: K {interface: public};
    var k_aG: per_ms {interface: public};
    var R: coulomb_x_mV_per__K_x_mol_ {interface: public};
    var Vbar_cGMP: mM_per_ms_2 {interface: public};
    var Q: dimensionless {interface: public};
    var I_VOCC: nSmV {interface: public};
    var F: C_per_mol {interface: public};
    var IK_totm: nSmV {interface: public};
    var K_NSC: mol_per_m3 {interface: public};
    var k_onIP3: per__ms_x_mM__2 {interface: public};
    var R_NCXcGMP: dimensionless {interface: public};
    var tau_tr: millis {interface: public};
    var I_ClCa: nSmV {interface: public};
    var INa_SOC: nSmV {interface: public};
    var K_i_init: mol_per_m3 {interface: public};
    var Vol_i: picoL {interface: public};
    var K_e: mol_per_m3 {interface: public};
    var K_actIP3: mol_per_m3 {interface: public};
    var NO_0: mol_per_m3 {interface: public};
    var K_ClCacGMP: mol_per_m3 {interface: public};
    var E_Cl: milliV {interface: public};
    var R_NO: dimensionless {interface: public};
    var d_NSCmin: dimensionless {interface: public};
    var IK_NaKCl: nSmV {interface: public};
    var g_Kleak: nS {interface: public};
    var K_dCM: mol_per_m3 {interface: public};
    var PNa_NSC: cm_per_s {interface: public};
    var E_Ca: milliV {interface: public};
    var C_m: picofarad {interface: public};
    var r_rG: per_ms {interface: public};
    var OPtot_IP3: dimensionless {interface: public};
    var L_NaKCl: mol2_per__J_x_s_x_cm2_ {interface: public};
    var k_1sGC: per__ms_x_mM__2 {interface: public};
    var DAG: mol_per_m3 {interface: public};
    var A_m: cm2 {interface: public};
    var CSQNbar: mol_per_m3 {interface: public};
    var IP3_0: mol_per_m3 {interface: public};
    var deltaG_0: dimensionless {interface: public};
    var PIP2_T: dimensionless {interface: public};
    var E_K: milliV {interface: public};
    var alpha_x15: dimensionless {interface: public};
    var alpha_x15_init: dimensionless {interface: public};
    var beta_x15: dimensionless {interface: public};
    var Pk_bar15: dimensionless {interface: public};
    var tau_Pk15: millis {interface: public};
    var G_k15: nS {interface: public};
    var I_Kv15: nSmV {interface: public};
    var alpha_x21: dimensionless {interface: public};
    var alpha_x21_init: dimensionless {interface: public};
    var beta_x21: dimensionless {interface: public};
    var beta_x21_init: dimensionless {interface: public};
    var Pk_bar21: dimensionless {interface: public};
    var Pk_21_init: dimensionless {interface: public};
    var tau_Pk21: millis {interface: public};
    var G_k21: nS {interface: public};
    var I_Kv21: nSmV {interface: public};
    var z_K: dimensionless {interface: public};
    var RT: coulomb_mV_per_mol {interface: public};
    var p_f: dimensionless {init: p_f_init, interface: public};
    var p_f_init: dimensionless {interface: public};
    var Ca_u: mol_per_m3 {init: Ca_u_init, interface: public};
    var Ca_r: mol_per_m3 {init: Ca_r_init, interface: public};
    var Ca_i: mol_per_m3 {init: Ca_i_init, interface: public};
    var f_L: dimensionless {init: f_L_init, interface: public};
    var f_L_init: dimensionless {interface: public};
    var d_L: dimensionless {init: d_L_init, interface: public};
    var d_L_init: dimensionless {interface: public};
    var P_SOC: dimensionless {init: P_SOC_init, interface: public};
    var P_SOC_init: dimensionless {interface: public};
    var V_cGMP: mM_per_ms_2 {init: V_cGMP_init, interface: public};
    var V_cGMP_init: mM_per_ms_2 {interface: public};
    var IP3: mol_per_m3 {init: IP3_init, interface: public};
    var IP3_init: mol_per_m3 {interface: public};
    var V_m: milliV {init: V_m_init, interface: public};
    var R_11: dimensionless {init: R_11_init, interface: public};
    var R_11_init: dimensionless {interface: public};
    var R_10: dimensionless {init: R_10_init, interface: public};
    var R_01: dimensionless {init: R_01_init, interface: public};
    var cGMP_i: mol_per_m3 {init: cGMP_i_init, interface: public};
    var h_IP3: dimensionless {init: h_IP3_init, interface: public};
    var h_IP3_init: dimensionless {interface: public};
    var R_supSPG: dimensionless {init: R_supSPG_init, interface: public};
    var Na_i: mol_per_m3 {init: Na_i_init, interface: public};
    var PIP2: dimensionless {init: PIP2_init, interface: public};
    var PIP2_init: dimensionless {interface: public};
    var Cl_i: mol_per_m3 {init: Cl_i_init, interface: public};
    var R_supSG: dimensionless {init: R_supSG_init, interface: public};
    var R_supSG_init: dimensionless {interface: public};
    var G: dimensionless {init: G_init, interface: public};
    var G_init: dimensionless {interface: public};
    var K_i: mol_per_m3 {init: K_i_init, interface: public};
    var p_s: dimensionless {init: p_s_init, interface: public};
    var p_s_init: dimensionless {interface: public};
    var Pk_15: dimensionless {init: Pk_15_init, interface: public};
    var Pk_15_init: dimensionless {interface: public};
    var beta_x15_init: dimensionless {interface: public};
    var Pk_21: dimensionless {init: Pk_21_init, interface: public};
    alpha_x15 = 0.0717{dimensionless}*pow(e, V_m/12.9290{milliV});
    alpha_x15_init = 0.0717{dimensionless}*pow(e, V_m0/12.9290{milliV});
    beta_x15 = 0.0533{dimensionless}*pow(e, V_m/191.7326{milliV});
    Pk_bar15 = 1{dimensionless}/(1{dimensionless}+beta_x15/alpha_x15);
    tau_Pk15 = 1{dimensionless}/(alpha_x15+beta_x15)+0.3489{dimensionless};
    ode(Pk_15, t) = (Pk_bar15-Pk_15)/tau_Pk15;
    I_Kv15 = G_k15*Pk_15*(V_m-E_K);
    alpha_x21 = 0.0404{dimensionless}*exp(V_m/10.5223{milliV});
    alpha_x21_init = 0.0404{dimensionless}*exp(V_m0/10.5223{milliV});
    beta_x21 = 0.0355{dimensionless}*pow(e, V_m/221.4151{milliV});
    beta_x21_init = 0.0355{dimensionless}*pow(e, V_m0/221.4151{milliV});
    Pk_bar21 = 1{dimensionless}/(1{dimensionless}+beta_x21/alpha_x21);
    Pk_21_init = 1{dimensionless}/(1{dimensionless}+beta_x21_init/alpha_x21_init);
    tau_Pk21 = 1{dimensionless}/(alpha_x21+beta_x21)+11.4616{dimensionless};
    ode(Pk_21, t) = (Pk_bar21-Pk_21)/tau_Pk21;
    I_Kv21 = G_k21*Pk_21*(V_m-E_K);
    gamma_G = N_Avo*Vol_i;
    RT = R*T;
    F_per_RT = F/RT;
    A_m = C_m/1e6{picofarad_per_cm2_1};
    PK_NSC = PNa_NSC*1.06{dimensionless};
    PCa_NSC = PNa_NSC*4.54{dimensionless};
    Q = pow(Q_10, (T-309.15{K})/10{K});
    B5_sGC = k_2sGC/k_3sGC;
    A0_sGC = ((k_m1sGC+k_2sGC)*k_DsGC+k_m1sGC*k_m2sGC)/(k_1sGC*k_3sGC);
    A1_sGC = ((k_1sGC+k_3sGC)*k_DsGC+(k_2sGC+k_m2sGC)*k_1sGC)/(k_1sGC*k_3sGC);
    ode(R_supSG, t) = k_rG*xi_G*R_TG-(k_rG+k_pG*NE/(K_1G+NE))*R_supSG-k_rG*R_supSPG;
    ode(V_m, t) = 1{dimensionless}/C_m*((I_VOCC+I_BKCa+I_Kv21+I_Kv15+I_Kleak+I_NSC+I_SOC+I_ClCa+I_PMCA+I_NCX+I_NaK)*(-1{dimensionless})+I_stim);
    ode(R_supSPG, t) = NE*(k_pG*R_supSG/(K_1G+NE)-k_eG*R_supSPG/(K_2G+NE));
    ode(IP3, t) = (r_hG*PIP2/gamma_G-k_degG*IP3*1e-15{peta_SF})*1e15{femto_SF};
    ode(PIP2, t) = (r_hG+r_rG)*PIP2*(-1{dimensionless})-r_rG*gamma_G*IP3*1e-15{peta_SF}+r_rG*PIP2_T;
    ode(G, t) = k_aG*(deltaG_0+rho_rG)*(G_TG-G)-k_dG*G;
    ode(d_L, t) = (dbar_L-d_L)/tau_dL;
    ode(f_L, t) = (fbar_L-f_L)/tau_fL;
    ode(Ca_i, t) = (ICa_totm+I_SERCA-I_rel-I_IP3)/(z_Ca*F*Vol_Ca)/(1{dimensionless}+Sbar_CM*K_dCM/sqr(K_dCM+Ca_i)+Bbar_F*K_dB/sqr(K_dB+Ca_i))*(-1{dimensionless});
    ode(p_f, t) = (pbar_o-p_f)/tau_pf;
    ode(V_cGMP, t) = (Vbar_cGMP-V_cGMP)/tau_sGC;
    ode(p_s, t) = (pbar_o-p_s)/tau_ps;
    ode(cGMP_i, t) = V_cGMP-k_pdecGMP*sqr(cGMP_i)/(cGMP_i+K_mpde);
    ode(Na_i, t) = INa_totm/(F*Vol_i)*(-1{dimensionless});
    ode(K_i, t) = IK_totm/(F*Vol_i)*(-1{dimensionless});
    ode(Cl_i, t) = ICl_totm/(z_Cl*F*Vol_i)*(-1{dimensionless});
    E_K = 1{dimensionless}/(z_K*F_per_RT)*ln(K_e/K_i);
    ode(P_SOC, t) = (Pbar_SOC-P_SOC)/tau_SOC;
    E_Na = 1{dimensionless}/(z_Na*F_per_RT)*ln(Na_e/Na_i);
    ode(h_IP3, t) = k_onIP3*(K_inhIP3-(Ca_i+K_inhIP3)*h_IP3);
    E_Ca = 1{dimensionless}/(z_Ca*F_per_RT)*ln(Ca_e/Ca_i);
    E_Cl = 1{dimensionless}/(z_Cl*F_per_RT)*ln(Cl_e/Cl_i);
    dbar_L = 1{dimensionless}/(1{dimensionless}+exp(V_m/8.3{milliV}*(-1{dimensionless})));
    fbar_L = 1{dimensionless}/(1{dimensionless}+exp((V_m+42{milliV})/9.1{milliV}));
    tau_dL = 2.5{millis}*exp(sqr((V_m+40{milliV})/30{milliV})*(-1{dimensionless}))+1.15{millis};
    tau_fL = 65{millis}*exp(sqr((V_m+35{milliV})/25{milliV})*(-1{dimensionless}))+45{millis};
    I_VOCC = A_m*P_VOCC*d_L*f_L*V_m*sqr(z_Ca)*F*F_per_RT*(Ca_e-Ca_i*exp(V_m*z_Ca*F_per_RT))/(1{dimensionless}-exp(V_m*z_Ca*F_per_RT))*1e6{micro_SF};
    P_KCa = p_f*.17{dimensionless}+p_s*.83{dimensionless};
    i_KCa = P_BKCa*V_m*F*F_per_RT*(K_e-K_i*exp(V_m*F_per_RT))/(1{dimensionless}-exp(V_m*F_per_RT))*1e6{micro_SF};
    ode(Ca_u, t) = (I_SERCA-I_tr-I_IP3)/(z_Ca*F*Vol_SRu);
    ode(Ca_r, t) = (I_tr-I_rel)/(z_Ca*F*Vol_SRr)/(1{dimensionless}+CSQNbar*K_CSQN/sqr(K_CSQN+Ca_r));
    ode(R_10, t) = K_r1*sqr(Ca_i)*R_00-(K_mr1+K_r2*Ca_i)*R_10+K_mr2*R_11;
    ode(R_11, t) = K_r2*Ca_i*R_10-(K_mr1+K_mr2)*R_11+K_r1*sqr(Ca_i)*R_01;
    R_NO = NO/(NO+2e-4{mol_per_m3});
    ode(R_01, t) = K_r2*Ca_i*R_00+K_mr1*R_11-(K_mr2+K_r1*sqr(Ca_i))*R_01;
    R_cGMP = sqr(cGMP_i)/(sqr(cGMP_i)+sqr(.0015{mol_per_m3}));
    V_50KCa = 41.7{milliV}*log(Ca_i/1{mol_per_m3})*(-1{dimensionless})-128.2{milliV}-dV_50KCaNO*R_NO-dV_50KCacGMP*R_cGMP;
    pbar_o = 1{dimensionless}/(1{dimensionless}+exp((V_m-V_50KCa)/18.25{milliV}*(-1{dimensionless})));
    I_BKCa = A_m*N_BKCa*P_KCa*i_KCa;
    pbar_K = 1{dimensionless}/(1{dimensionless}+exp((V_m+11{milliV})/15{milliV}*(-1{dimensionless})));
    qbar = 1{dimensionless}/(1{dimensionless}+exp((V_m+40{milliV})/14{milliV}));
    I_Kleak = g_Kleak*(V_m-E_K);
    Po_NSC = .4344{dimensionless}+.5656{dimensionless}/(1{dimensionless}+exp((V_m-47.12{milliV})/24.24{milliV}*(-1{dimensionless})));
    DAG = IP3;
    INa_NSC = A_m*(DAG/(DAG+K_NSC)+d_NSCmin)*Po_NSC*PNa_NSC*V_m*F*F_per_RT*(Na_e-Na_i*exp(V_m*F_per_RT))/(1{dimensionless}-exp(V_m*F_per_RT))*1e6{micro_SF};
    IK_NSC = A_m*(DAG/(DAG+K_NSC)+d_NSCmin)*Po_NSC*PK_NSC*V_m*F*F_per_RT*(K_e-K_i*exp(V_m*F_per_RT))/(1{dimensionless}-exp(V_m*F_per_RT))*1e6{micro_SF};
    ICa_NSC = A_m*d_NSCmin*Po_NSC*PCa_NSC*V_m*sqr(z_Ca)*F*F_per_RT*(Ca_e-Ca_i*exp(z_Ca*V_m*F_per_RT))/(1{dimensionless}-exp(z_Ca*V_m*F_per_RT))*1e6{micro_SF};
    I_NSC = INa_NSC+IK_NSC+ICa_NSC;
    Pbar_SOC = 1{dimensionless}/(1{dimensionless}+Ca_u/K_SOC);
    INa_SOC = gNa_SOC*P_SOC*(V_m-E_Na);
    ICa_SOC = gCa_SOC*P_SOC*(V_m-E_Ca);
    I_SOC = INa_SOC+ICa_SOC;
    alpha_Cl = pow(cGMP_i/1{mol_per_m3}, n_ClcGMP)/(pow(cGMP_i/1{mol_per_m3}, n_ClcGMP)+pow(K_ClcGMP/1{mol_per_m3}, n_ClcGMP));
    K_ClCacGMP = (1{dimensionless}-alpha_Cl*.9{dimensionless})*4e-4{mol_per_m3};
    P_Cl = R_ClcGMPmin*pow(Ca_i/1{mol_per_m3}, n_ClCa)/(pow(Ca_i/1{mol_per_m3}, n_ClCa)+pow(K_ClCa/1{mol_per_m3}, n_ClCa))+alpha_Cl*pow(Ca_i/1{mol_per_m3}, n_ClCa)/(pow(Ca_i/1{mol_per_m3}, n_ClCa)+pow(K_ClCacGMP/1{mol_per_m3}, n_ClCa));
    I_ClCa = C_m*g_ClCa*P_Cl*(V_m-E_Cl);
    I_PMCA = Ibar_PMCA*Ca_i/(Ca_i+K_mPMCA);
    R_NCXcGMP = 1{dimensionless}+cGMP_i/(cGMP_i+.045{mol_per_m3})*.55{dimensionless};
    phi_F = exp(gamma_NCX*V_m*F_per_RT);
    phi_R = exp((gamma_NCX-1{dimensionless})*V_m*F_per_RT);
    I_NCX = g_NCX*R_NCXcGMP*(pow(Na_i, 3{dimensionless})*Ca_e*phi_F-pow(Na_e, 3{dimensionless})*Ca_i*phi_R)/(1{mM4_1}+d_NCX*(pow(Na_e, 3{dimensionless})*Ca_i+pow(Na_i, 3{dimensionless})*Ca_e));
    I_NaK = C_m*Ibar_NaK*Q*pow(K_e/1{mol_per_m3}, n_HKe)/(pow(K_e/1{mol_per_m3}, n_HKe)+pow(K_dKe/1{mol_per_m3}, n_HKe))*pow(Na_i/1{mol_per_m3}, n_HNai)/(pow(Na_i/1{mol_per_m3}, n_HNai)+pow(Na_dNai/1{mol_per_m3}, n_HNai))*(V_m+150{milliV})/(V_m+200{milliV});
    R_NaKClcGMP = 1{dimensionless}+cGMP_i/(cGMP_i+.0064{mol_per_m3})*3.5{dimensionless};
    ICl_NaKCl = R_NaKClcGMP*z_Cl*A_m*L_NaKCl*F*R*T*log(Na_e/Na_i*K_e/K_i*sqr(Cl_e/Cl_i))*(-1e9{nano_SF});
    INa_NaKCl = ICl_NaKCl*(-0.5{dimensionless});
    IK_NaKCl = ICl_NaKCl*(-0.5{dimensionless});
    OPtot_IP3 = pow(IP3/(IP3+K_IP3)*Ca_i/(Ca_i+K_actIP3)*h_IP3, 3{dimensionless});
    I_IP3 = Ibar_IP3*z_Ca*Vol_Ca*F*OPtot_IP3*(Ca_u-Ca_i);
    I_SERCA = Ibar_SERCA*Ca_i/(Ca_i+K_mup);
    I_tr = (Ca_u-Ca_r)*z_Ca*F*Vol_SRu/tau_tr;
    I_rel = (sqr(R_10)+R_leak)*(Ca_r-Ca_i)*z_Ca*F*Vol_SRr/tau_rel;
    R_00 = 1{dimensionless}-R_10-R_11-R_01;
    r_hG0 = k_degG*gamma_G*IP3_init/PIP2_init;
    rho_rG = NE*R_supSG/(xi_G*R_TG*(K_1G+NE));
    r_hG = alpha_G*Ca_i/(Ca_i+K_cG)*G;
    Vbar_cGMP = V_cGMPmax*(B5_sGC*NO+sqr(NO))/(A0_sGC+A1_sGC*NO+sqr(NO));
    tau_sGC = sel
      case (Vbar_cGMP-V_cGMP == 0{mM_per_ms_2}) or (Vbar_cGMP-V_cGMP > 0{mM_per_ms_2}):
        1{dimensionless}/(k_3sGC*NO+k_DrsGC);
      otherwise:
        1{dimensionless}/(k_m2sGC+k_DrsGC);
    endsel;
    ICa_totm = ICa_SOC+I_VOCC-I_NCX*2{dimensionless}+I_PMCA+ICa_NSC;
    INa_totm = INa_NaKCl+INa_SOC+I_NaK*3{dimensionless}+I_NCX*3{dimensionless}+INa_NSC;
    IK_totm = IK_NaKCl+I_BKCa+I_Kv21+I_Kv15+IK_NSC+I_Kleak-I_NaK*2{dimensionless};
    ICl_totm = ICl_NaKCl+I_ClCa;
    NO = 0{mol_per_m3};
    deltaG_0 = k_dG*0{dimensionless}/(k_aG*(G_TG-0{dimensionless}));
    I_stim = sel
      case (t == 0{millis}) or (t > 0{millis}):
        0{nSmV};
      otherwise:
        0{nSmV};
    endsel;
    NE = sel
      case (t < 10000{millis}) or (t == 70000{millis}) or (t > 70000{millis}):
        0{mol_per_m3};
      otherwise:
        0.001{mol_per_m3};
    endsel;
    R_NO0 = NO_0/(NO_0+2e-4{mol_per_m3});
    R_cGMP0 = sqr(cGMP_i_init)/(sqr(cGMP_i_init)+sqr(5.5e-4{uM})*1e-6{mega_SF});
    V_50KCa0 = -41.7{milliV}*log(Ca_i_init/1{mol_per_m3})-128.2{milliV};
    p_f_init = 1{dimensionless}/(1{dimensionless}+exp((V_m0-V_50KCa0)/18.25{milliV}*(-1{dimensionless})));
    f_L_init = 1{dimensionless}/(1{dimensionless}+exp((V_m0+42{milliV})/9.1{milliV}));
    d_L_init = 1{dimensionless}/(1{dimensionless}+exp(V_m0/8.3{milliV}*(-1{dimensionless})));
    h_IP3_init = K_inhIP3/(Ca_i_init+K_inhIP3);
    PIP2_init = PIP2_T-(1{dimensionless}+k_degG/r_rG)*gamma_G*IP3_init*1e-15{femto_SF};
    R_supSG_init = R_TG*xi_G;
    G_init = r_hG0*(K_cG+Ca_i_init)/(alpha_G*Ca_i_init)*1e-15{dimensionless};
    p_s_init = 1{dimensionless}/(1{dimensionless}+exp((V_m0-V_50KCa0)/18.25{milliV}*(-1{dimensionless})));
    beta_x15_init = 0.0533{dimensionless}*pow(e, V_m0/191.7326{dimensionless});
    Pk_15_init = 1{dimensionless}/(1{dimensionless}+beta_x15_init/alpha_x15_init);
  enddef;

  def comp terminal_venous_connection as
  enddef;

  def comp Kapela as
    var ICa_SOC: picoampere {interface: public};
    var E_Na: mV {interface: public};
    var I_SERCA: picoampere {interface: public};
    var I_stim: picoampere {interface: public};
    var INa_NSC: picoampere {interface: public};
    var tau_fL: ms {interface: public};
    var i_KCa: picoampere {interface: public};
    var ICl_NaKCl: picoampere {interface: public};
    var P_KCa: dimensionless {interface: public};
    var V_50KCa: mV {interface: public};
    var I_SOC: picoampere {interface: public};
    var R_cGMP: dimensionless {interface: public};
    var dbar_L: dimensionless {interface: public};
    var I_IP3: picoampere {interface: public};
    var ICa_NSC: picoampere {interface: public};
    var pbar_o: dimensionless {interface: public};
    var tau_dL: ms {interface: public};
    var I_NaK: picoampere {interface: public};
    var alpha_Cl: dimensionless {interface: public};
    var P_Cl: dimensionless {interface: public};
    var Po_NSC: dimensionless {interface: public};
    var pbar_K: dimensionless {interface: public};
    var rho_rG: dimensionless {interface: public};
    var R_NaKClcGMP: dimensionless {interface: public};
    var INa_totm: picoampere {interface: public};
    var R_00: dimensionless {interface: public};
    var I_NSC: picoampere {interface: public};
    var ICl_totm: picoampere {interface: public};
    var I_BKCa: picoampere {interface: public};
    var qbar: dimensionless {interface: public};
    var tau_sGC: ms {interface: public};
    var Pbar_SOC: dimensionless {interface: public};
    var I_rel: picoampere {interface: public};
    var I_PMCA: picoampere {interface: public};
    var I_Kleak: picoampere {interface: public};
    var ICa_totm: picoampere {interface: public};
    var phi_R: dimensionless {interface: public};
    var IK_NSC: picoampere {interface: public};
    var phi_F: dimensionless {interface: public};
    var I_NCX: picoampere {interface: public};
    var INa_NaKCl: picoampere {interface: public};
    var r_hG: per_ms {interface: public};
    var fbar_L: dimensionless {interface: public};
    var I_tr: picoampere {interface: public};
    var I_VOCC: picoampere {interface: public};
    var IK_totm: picoampere {interface: public};
    var R_NCXcGMP: dimensionless {interface: public};
    var I_ClCa: picoampere {interface: public};
    var INa_SOC: picoampere {interface: public};
    var K_ClCacGMP: mM {interface: public};
    var E_Cl: mV {interface: public};
    var IK_NaKCl: picoampere {interface: public};
    var E_Ca: mV {interface: public};
    var OPtot_IP3: dimensionless {interface: public};
    var DAG: mM {interface: public};
    var E_K: mV {interface: public};
    var alpha_x15: dimensionless {interface: public};
    var beta_x15: dimensionless {interface: public};
    var Pk_bar15: dimensionless {interface: public};
    var tau_Pk15: ms {interface: public};
    var I_Kv15: picoampere {interface: public};
    var alpha_x21: dimensionless {interface: public};
    var beta_x21: dimensionless {interface: public};
    var Pk_bar21: dimensionless {interface: public};
    var tau_Pk21: ms {interface: public};
    var I_Kv21: picoampere {interface: public};
    var K_CSQN: mM {interface: public};
    var p_f_init: dimensionless {interface: public};
    var d_NCX: dimensionless {interface: public};
    var G_TG: dimensionless {interface: public};
    var k_DsGC: per_ms {interface: public};
    var K_ClcGMP: mM {interface: public};
    var k_pdecGMP: per_ms {interface: public};
    var Q_10: dimensionless {interface: public};
    var k_DrsGC: per_ms {interface: public};
    var tau_SOC: ms {interface: public};
    var Ca_u_init: mM {interface: public};
    var Ca_r_init: mM {interface: public};
    var k_2sGC: per_ms {interface: public};
    var Istim_amp: picoampere {interface: public};
    var dV_50KCaNO: mV {interface: public};
    var tau_ps: ms {interface: public};
    var Ca_i_init: mM {interface: public};
    var R_leak: dimensionless {interface: public};
    var g_NCX: picoampere {interface: public};
    var Ca_e: mM {interface: public};
    var K_mup: mM {interface: public};
    var K_dKe: mM {interface: public};
    var P_SOC_init: dimensionless {interface: public};
    var tau_pf: ms {interface: public};
    var Vol_Ca: picoL {interface: public};
    var gNa_SOC: nanosiemens {interface: public};
    var V_cGMP_init: mM_per_ms {interface: public};
    var IP3_init: mM {interface: public};
    var Ibar_PMCA: picoampere {interface: public};
    var K_inhIP3: mM {interface: public};
    var V_m_init: mV {interface: public};
    var gamma_NCX: dimensionless {interface: public};
    var P_BKCa: cm3_per_s {interface: public};
    var tau_q2: ms {interface: public};
    var tau_q1: ms {interface: public};
    var Na_dNai: mM {interface: public};
    var R_11_init: dimensionless {interface: public};
    var R_10_init: dimensionless {interface: public};
    var V_m0: mV {interface: public};
    var n_HNai: dimensionless {interface: public};
    var alpha_G: per_ms {interface: public};
    var k_3sGC: per__ms_x_mM_ {interface: public};
    var z_Cl: dimensionless {interface: public};
    var gCa_SOC: nanosiemens {interface: public};
    var K_ClCa: mM {interface: public};
    var Ibar_IP3: per_ms {interface: public};
    var R_01_init: dimensionless {interface: public};
    var z_Ca: dimensionless {interface: public};
    var Ibar_NaK: picoampere_per_picofarad {interface: public};
    var k_rG: per_ms {interface: public};
    var n_ClCa: dimensionless {interface: public};
    var R_TG: dimensionless {interface: public};
    var k_eG: per_ms {interface: public};
    var tau_rel: ms {interface: public};
    var cGMP_i_init: mM {interface: public};
    var k_m1sGC: per_ms {interface: public};
    var h_IP3_init: dimensionless {interface: public};
    var z_Na: dimensionless {interface: public};
    var NE: mM {interface: public};
    var R_supSPG_init: dimensionless {interface: public};
    var k_degG: per_ms {interface: public};
    var Ibar_SERCA: picoampere {interface: public};
    var K_r2: per__ms_x_mM_ {interface: public};
    var K_r1: per__ms_x_mM2_ {interface: public};
    var Bbar_F: mM {interface: public};
    var R_ClcGMPmin: dimensionless {interface: public};
    var k_dG: per_ms {interface: public};
    var Na_i_init: mM {interface: public};
    var Vol_SRu: picoL {interface: public};
    var PIP2_init: dimensionless {interface: public};
    var Na_e: mM {interface: public};
    var Vol_SRr: picoL {interface: public};
    var Cl_i_init: mM {interface: public};
    var k_pG: per_ms {interface: public};
    var n_HKe: dimensionless {interface: public};
    var Cl_e: mM {interface: public};
    var K_mPMCA: mM {interface: public};
    var K_mr2: per_ms {interface: public};
    var K_mr1: per_ms {interface: public};
    var dV_50KCacGMP: mV {interface: public};
    var g_ClCa: nanosiemens_per_picofarad {interface: public};
    var K_SOC: mM {interface: public};
    var R_supSG_init: dimensionless {interface: public};
    var P_VOCC: cm_per_s {interface: public};
    var K_dB: mM {interface: public};
    var n_ClcGMP: dimensionless {interface: public};
    var V_cGMPmax: mM_per_ms {interface: public};
    var K_2G: mM {interface: public};
    var N_Avo: per_mol {interface: public};
    var K_IP3: mM {interface: public};
    var xi_G: dimensionless {interface: public};
    var K_cG: mM {interface: public};
    var k_m2sGC: per_ms {interface: public};
    var NE_amp: mM {interface: public};
    var N_BKCa: per_cm2 {interface: public};
    var K_1G: mM {interface: public};
    var K_mpde: mM {interface: public};
    var Sbar_CM: mM {interface: public};
    var T: K {interface: public};
    var k_aG: per_ms {interface: public};
    var R: coulomb_x_mV_per__K_x_mol_ {interface: public};
    var G_init: dimensionless {interface: public};
    var F: C_per_mol {interface: public};
    var K_NSC: mM {interface: public};
    var k_onIP3: per__ms_x_mM_ {interface: public};
    var tau_tr: ms {interface: public};
    var K_i_init: mM {interface: public};
    var Vol_i: picoL {interface: public};
    var K_e: mM {interface: public};
    var K_actIP3: mM {interface: public};
    var NO_0: mM {interface: public};
    var d_NSCmin: dimensionless {interface: public};
    var g_Kleak: nanosiemens {interface: public};
    var K_dCM: mM {interface: public};
    var PNa_NSC: cm_per_s {interface: public};
    var C_m: picofarad {interface: public};
    var r_rG: per_ms {interface: public};
    var L_NaKCl: mol2_per__J_x_s_x_cm2_ {interface: public};
    var k_1sGC: per__ms_x_mM_ {interface: public};
    var CSQNbar: mM {interface: public};
    var IP3_0: mM {interface: public};
    var PIP2_T: dimensionless {interface: public};
    var p_s_init: dimensionless {interface: public};
    var Pk_15_init: dimensionless {interface: public};
    var G_k15: nanosiemens {interface: public};
    var Pk_21_init: dimensionless {interface: public};
    var G_k21: nanosiemens {interface: public};
    var z_K: dimensionless {interface: public};
    var p_f: dimensionless {interface: public};
    var Ca_u: mM {interface: public};
    var Ca_r: mM {interface: public};
    var Ca_i: mM {interface: public};
    var f_L: dimensionless {interface: public};
    var d_L: dimensionless {interface: public};
    var P_SOC: dimensionless {interface: public};
    var V_cGMP: mM_per_ms {interface: public};
    var IP3: mM {interface: public};
    var V_m: mV {interface: public};
    var R_11: dimensionless {interface: public};
    var R_10: dimensionless {interface: public};
    var R_01: dimensionless {interface: public};
    var cGMP_i: mM {interface: public};
    var h_IP3: dimensionless {interface: public};
    var R_supSPG: dimensionless {interface: public};
    var Na_i: mM {interface: public};
    var PIP2: dimensionless {interface: public};
    var Cl_i: mM {interface: public};
    var R_supSG: dimensionless {interface: public};
    var G: dimensionless {interface: public};
    var K_i: mM {interface: public};
    var p_s: dimensionless {interface: public};
    var Pk_15: dimensionless {interface: public};
    var Pk_21: dimensionless {interface: public};
  enddef;
  def map between parameters and Kapela_module for
    vars K_CSQN_Kapela and K_CSQN;
    vars d_NCX_Kapela and d_NCX;
    vars G_TG_Kapela and G_TG;
    vars k_DsGC_Kapela and k_DsGC;
    vars K_ClcGMP_Kapela and K_ClcGMP;
    vars k_pdecGMP_Kapela and k_pdecGMP;
    vars Q_10_Kapela and Q_10;
    vars k_DrsGC_Kapela and k_DrsGC;
    vars tau_SOC_Kapela and tau_SOC;
    vars Ca_u_init_Kapela and Ca_u_init;
    vars Ca_r_init_Kapela and Ca_r_init;
    vars k_2sGC_Kapela and k_2sGC;
    vars Istim_amp_Kapela and Istim_amp;
    vars dV_50KCaNO_Kapela and dV_50KCaNO;
    vars tau_ps_Kapela and tau_ps;
    vars Ca_i_init_Kapela and Ca_i_init;
    vars R_leak_Kapela and R_leak;
    vars g_NCX_Kapela and g_NCX;
    vars Ca_e_Kapela and Ca_e;
    vars K_mup_Kapela and K_mup;
    vars K_dKe_Kapela and K_dKe;
    vars P_SOC_init_Kapela and P_SOC_init;
    vars tau_pf_Kapela and tau_pf;
    vars Vol_Ca_Kapela and Vol_Ca;
    vars gNa_SOC_Kapela and gNa_SOC;
    vars V_cGMP_init_Kapela and V_cGMP_init;
    vars IP3_init_Kapela and IP3_init;
    vars Ibar_PMCA_Kapela and Ibar_PMCA;
    vars K_inhIP3_Kapela and K_inhIP3;
    vars V_m_init_Kapela and V_m_init;
    vars gamma_NCX_Kapela and gamma_NCX;
    vars P_BKCa_Kapela and P_BKCa;
    vars tau_q2_Kapela and tau_q2;
    vars tau_q1_Kapela and tau_q1;
    vars Na_dNai_Kapela and Na_dNai;
    vars R_11_init_Kapela and R_11_init;
    vars R_10_init_Kapela and R_10_init;
    vars V_m0_Kapela and V_m0;
    vars n_HNai_Kapela and n_HNai;
    vars alpha_G_Kapela and alpha_G;
    vars k_3sGC_Kapela and k_3sGC;
    vars z_Cl_Kapela and z_Cl;
    vars gCa_SOC_Kapela and gCa_SOC;
    vars K_ClCa_Kapela and K_ClCa;
    vars Ibar_IP3_Kapela and Ibar_IP3;
    vars R_01_init_Kapela and R_01_init;
    vars z_Ca_Kapela and z_Ca;
    vars Ibar_NaK_Kapela and Ibar_NaK;
    vars k_rG_Kapela and k_rG;
    vars n_ClCa_Kapela and n_ClCa;
    vars R_TG_Kapela and R_TG;
    vars k_eG_Kapela and k_eG;
    vars tau_rel_Kapela and tau_rel;
    vars cGMP_i_init_Kapela and cGMP_i_init;
    vars k_m1sGC_Kapela and k_m1sGC;
    vars z_Na_Kapela and z_Na;
    vars R_supSPG_init_Kapela and R_supSPG_init;
    vars k_degG_Kapela and k_degG;
    vars Ibar_SERCA_Kapela and Ibar_SERCA;
    vars K_r2_Kapela and K_r2;
    vars K_r1_Kapela and K_r1;
    vars Bbar_F_Kapela and Bbar_F;
    vars R_ClcGMPmin_Kapela and R_ClcGMPmin;
    vars k_dG_Kapela and k_dG;
    vars Na_i_init_Kapela and Na_i_init;
    vars Vol_SRu_Kapela and Vol_SRu;
    vars Na_e_Kapela and Na_e;
    vars Vol_SRr_Kapela and Vol_SRr;
    vars Cl_i_init_Kapela and Cl_i_init;
    vars k_pG_Kapela and k_pG;
    vars n_HKe_Kapela and n_HKe;
    vars Cl_e_Kapela and Cl_e;
    vars K_mPMCA_Kapela and K_mPMCA;
    vars K_mr2_Kapela and K_mr2;
    vars K_mr1_Kapela and K_mr1;
    vars dV_50KCacGMP_Kapela and dV_50KCacGMP;
    vars g_ClCa_Kapela and g_ClCa;
    vars K_SOC_Kapela and K_SOC;
    vars P_VOCC_Kapela and P_VOCC;
    vars K_dB_Kapela and K_dB;
    vars n_ClcGMP_Kapela and n_ClcGMP;
    vars V_cGMPmax_Kapela and V_cGMPmax;
    vars K_2G_Kapela and K_2G;
    vars N_Avo_Kapela and N_Avo;
    vars K_IP3_Kapela and K_IP3;
    vars xi_G_Kapela and xi_G;
    vars K_cG_Kapela and K_cG;
    vars k_m2sGC_Kapela and k_m2sGC;
    vars NE_amp_Kapela and NE_amp;
    vars N_BKCa_Kapela and N_BKCa;
    vars K_1G_Kapela and K_1G;
    vars K_mpde_Kapela and K_mpde;
    vars Sbar_CM_Kapela and Sbar_CM;
    vars T_Kapela and T;
    vars k_aG_Kapela and k_aG;
    vars R_Kapela and R;
    vars F_Kapela and F;
    vars K_NSC_Kapela and K_NSC;
    vars k_onIP3_Kapela and k_onIP3;
    vars tau_tr_Kapela and tau_tr;
    vars K_i_init_Kapela and K_i_init;
    vars Vol_i_Kapela and Vol_i;
    vars K_e_Kapela and K_e;
    vars K_actIP3_Kapela and K_actIP3;
    vars NO_0_Kapela and NO_0;
    vars d_NSCmin_Kapela and d_NSCmin;
    vars g_Kleak_Kapela and g_Kleak;
    vars K_dCM_Kapela and K_dCM;
    vars PNa_NSC_Kapela and PNa_NSC;
    vars C_m_Kapela and C_m;
    vars r_rG_Kapela and r_rG;
    vars L_NaKCl_Kapela and L_NaKCl;
    vars k_1sGC_Kapela and k_1sGC;
    vars CSQNbar_Kapela and CSQNbar;
    vars IP3_0_Kapela and IP3_0;
    vars PIP2_T_Kapela and PIP2_T;
    vars G_k15_Kapela and G_k15;
    vars G_k21_Kapela and G_k21;
    vars z_K_Kapela and z_K;
  enddef;
  def map between environment and Kapela_module for
    vars time and t;
  enddef;
  def map between Kapela_module and Kapela for
    vars ICa_SOC and ICa_SOC;
    vars K_CSQN and K_CSQN;
    vars E_Na and E_Na;
    vars d_NCX and d_NCX;
    vars G_TG and G_TG;
    vars I_SERCA and I_SERCA;
    vars k_DsGC and k_DsGC;
    vars I_stim and I_stim;
    vars INa_NSC and INa_NSC;
    vars K_ClcGMP and K_ClcGMP;
    vars tau_fL and tau_fL;
    vars k_pdecGMP and k_pdecGMP;
    vars Q_10 and Q_10;
    vars i_KCa and i_KCa;
    vars k_DrsGC and k_DrsGC;
    vars tau_SOC and tau_SOC;
    vars Ca_u_init and Ca_u_init;
    vars Ca_r_init and Ca_r_init;
    vars k_2sGC and k_2sGC;
    vars Istim_amp and Istim_amp;
    vars dV_50KCaNO and dV_50KCaNO;
    vars ICl_NaKCl and ICl_NaKCl;
    vars P_KCa and P_KCa;
    vars tau_ps and tau_ps;
    vars Ca_i_init and Ca_i_init;
    vars V_50KCa and V_50KCa;
    vars R_leak and R_leak;
    vars I_SOC and I_SOC;
    vars g_NCX and g_NCX;
    vars Ca_e and Ca_e;
    vars K_mup and K_mup;
    vars R_cGMP and R_cGMP;
    vars K_dKe and K_dKe;
    vars tau_pf and tau_pf;
    vars Vol_Ca and Vol_Ca;
    vars gNa_SOC and gNa_SOC;
    vars dbar_L and dbar_L;
    vars Ibar_PMCA and Ibar_PMCA;
    vars I_IP3 and I_IP3;
    vars ICa_NSC and ICa_NSC;
    vars pbar_o and pbar_o;
    vars K_inhIP3 and K_inhIP3;
    vars tau_dL and tau_dL;
    vars V_m_init and V_m_init;
    vars I_NaK and I_NaK;
    vars gamma_NCX and gamma_NCX;
    vars P_BKCa and P_BKCa;
    vars tau_q2 and tau_q2;
    vars tau_q1 and tau_q1;
    vars alpha_Cl and alpha_Cl;
    vars P_Cl and P_Cl;
    vars Po_NSC and Po_NSC;
    vars Na_dNai and Na_dNai;
    vars R_10_init and R_10_init;
    vars V_m0 and V_m0;
    vars pbar_K and pbar_K;
    vars n_HNai and n_HNai;
    vars rho_rG and rho_rG;
    vars alpha_G and alpha_G;
    vars k_3sGC and k_3sGC;
    vars z_Cl and z_Cl;
    vars gCa_SOC and gCa_SOC;
    vars K_ClCa and K_ClCa;
    vars R_NaKClcGMP and R_NaKClcGMP;
    vars Ibar_IP3 and Ibar_IP3;
    vars R_01_init and R_01_init;
    vars INa_totm and INa_totm;
    vars R_00 and R_00;
    vars z_Ca and z_Ca;
    vars I_NSC and I_NSC;
    vars Ibar_NaK and Ibar_NaK;
    vars k_rG and k_rG;
    vars n_ClCa and n_ClCa;
    vars R_TG and R_TG;
    vars ICl_totm and ICl_totm;
    vars I_BKCa and I_BKCa;
    vars qbar and qbar;
    vars k_eG and k_eG;
    vars tau_rel and tau_rel;
    vars cGMP_i_init and cGMP_i_init;
    vars k_m1sGC and k_m1sGC;
    vars tau_sGC and tau_sGC;
    vars Pbar_SOC and Pbar_SOC;
    vars I_rel and I_rel;
    vars z_Na and z_Na;
    vars NE and NE;
    vars R_supSPG_init and R_supSPG_init;
    vars k_degG and k_degG;
    vars Ibar_SERCA and Ibar_SERCA;
    vars K_r2 and K_r2;
    vars K_r1 and K_r1;
    vars Bbar_F and Bbar_F;
    vars I_PMCA and I_PMCA;
    vars R_ClcGMPmin and R_ClcGMPmin;
    vars I_Kleak and I_Kleak;
    vars k_dG and k_dG;
    vars Na_i_init and Na_i_init;
    vars Vol_SRu and Vol_SRu;
    vars Na_e and Na_e;
    vars Vol_SRr and Vol_SRr;
    vars Cl_i_init and Cl_i_init;
    vars k_pG and k_pG;
    vars n_HKe and n_HKe;
    vars Cl_e and Cl_e;
    vars K_mPMCA and K_mPMCA;
    vars K_mr2 and K_mr2;
    vars K_mr1 and K_mr1;
    vars dV_50KCacGMP and dV_50KCacGMP;
    vars ICa_totm and ICa_totm;
    vars phi_R and phi_R;
    vars g_ClCa and g_ClCa;
    vars K_SOC and K_SOC;
    vars P_VOCC and P_VOCC;
    vars IK_NSC and IK_NSC;
    vars K_dB and K_dB;
    vars phi_F and phi_F;
    vars I_NCX and I_NCX;
    vars n_ClcGMP and n_ClcGMP;
    vars V_cGMPmax and V_cGMPmax;
    vars K_2G and K_2G;
    vars N_Avo and N_Avo;
    vars INa_NaKCl and INa_NaKCl;
    vars K_IP3 and K_IP3;
    vars xi_G and xi_G;
    vars K_cG and K_cG;
    vars k_m2sGC and k_m2sGC;
    vars NE_amp and NE_amp;
    vars N_BKCa and N_BKCa;
    vars r_hG and r_hG;
    vars K_1G and K_1G;
    vars fbar_L and fbar_L;
    vars K_mpde and K_mpde;
    vars Sbar_CM and Sbar_CM;
    vars I_tr and I_tr;
    vars T and T;
    vars k_aG and k_aG;
    vars R and R;
    vars I_VOCC and I_VOCC;
    vars F and F;
    vars IK_totm and IK_totm;
    vars K_NSC and K_NSC;
    vars k_onIP3 and k_onIP3;
    vars R_NCXcGMP and R_NCXcGMP;
    vars tau_tr and tau_tr;
    vars I_ClCa and I_ClCa;
    vars INa_SOC and INa_SOC;
    vars K_i_init and K_i_init;
    vars Vol_i and Vol_i;
    vars K_e and K_e;
    vars K_actIP3 and K_actIP3;
    vars NO_0 and NO_0;
    vars K_ClCacGMP and K_ClCacGMP;
    vars E_Cl and E_Cl;
    vars d_NSCmin and d_NSCmin;
    vars IK_NaKCl and IK_NaKCl;
    vars g_Kleak and g_Kleak;
    vars K_dCM and K_dCM;
    vars PNa_NSC and PNa_NSC;
    vars E_Ca and E_Ca;
    vars C_m and C_m;
    vars r_rG and r_rG;
    vars OPtot_IP3 and OPtot_IP3;
    vars L_NaKCl and L_NaKCl;
    vars k_1sGC and k_1sGC;
    vars DAG and DAG;
    vars CSQNbar and CSQNbar;
    vars IP3_0 and IP3_0;
    vars PIP2_T and PIP2_T;
    vars E_K and E_K;
    vars alpha_x15 and alpha_x15;
    vars beta_x15 and beta_x15;
    vars Pk_bar15 and Pk_bar15;
    vars tau_Pk15 and tau_Pk15;
    vars G_k15 and G_k15;
    vars I_Kv15 and I_Kv15;
    vars alpha_x21 and alpha_x21;
    vars beta_x21 and beta_x21;
    vars Pk_bar21 and Pk_bar21;
    vars Pk_21_init and Pk_21_init;
    vars tau_Pk21 and tau_Pk21;
    vars G_k21 and G_k21;
    vars I_Kv21 and I_Kv21;
    vars z_K and z_K;
    vars p_f and p_f;
    vars p_f_init and p_f_init;
    vars Ca_u and Ca_u;
    vars Ca_r and Ca_r;
    vars Ca_i and Ca_i;
    vars f_L and f_L;
    vars d_L and d_L;
    vars P_SOC and P_SOC;
    vars P_SOC_init and P_SOC_init;
    vars V_cGMP and V_cGMP;
    vars V_cGMP_init and V_cGMP_init;
    vars IP3 and IP3;
    vars IP3_init and IP3_init;
    vars V_m and V_m;
    vars R_11 and R_11;
    vars R_11_init and R_11_init;
    vars R_10 and R_10;
    vars R_01 and R_01;
    vars cGMP_i and cGMP_i;
    vars h_IP3 and h_IP3;
    vars h_IP3_init and h_IP3_init;
    vars R_supSPG and R_supSPG;
    vars Na_i and Na_i;
    vars PIP2 and PIP2;
    vars PIP2_init and PIP2_init;
    vars Cl_i and Cl_i;
    vars R_supSG and R_supSG;
    vars R_supSG_init and R_supSG_init;
    vars G and G;
    vars G_init and G_init;
    vars K_i and K_i;
    vars p_s and p_s;
    vars p_s_init and p_s_init;
    vars Pk_15 and Pk_15;
    vars Pk_15_init and Pk_15_init;
    vars Pk_21 and Pk_21;
  enddef;
enddef;
