def model modules as
  // ------------module_units------------//
  def import using "Kapela_JUNE_25_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit C_per_mol using unit C_per_mol;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit J_per_MK using unit J_per_MK;
    unit C_per_M using unit C_per_M;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_M_millis using unit m3_per_M_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit cm using unit cm;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit mV using unit mV;
    unit C using unit C;
    unit picoA using unit picoA;
    unit microL using unit microL;
    unit Farad using unit Farad;
    unit picofarad using unit picofarad;
    unit per__ms_x_mM2_ using unit per__ms_x_mM2_;
    unit nanosiemens using unit nanosiemens;
    unit coulomb_x_mV_per__K_x_mol_ using unit coulomb_x_mV_per__K_x_mol_;
    unit mV_per_msec using unit mV_per_msec;
    unit per_cm2 using unit per_cm2;
    unit per_msec using unit per_msec;
    unit per_mV using unit per_mV;
    unit mol2_per__J_x_s_x_cm2_ using unit mol2_per__J_x_s_x_cm2_;
    unit picoampere using unit picoampere;
    unit msec using unit msec;
    unit nanosiemens_per_picofarad using unit nanosiemens_per_picofarad;
    unit cm_per_s using unit cm_per_s;
    unit per__ms_x_mM_ using unit per__ms_x_mM_;
    unit mM2 using unit mM2;
    unit cm3_per_s using unit cm3_per_s;
    unit K using unit K;
    unit picoampere_per_picofarad using unit picoampere_per_picofarad;
    unit picofarad_per_cm2 using unit picofarad_per_cm2;
    unit cm2 using unit cm2;
    unit coulomb_per_mol using unit coulomb_per_mol;
    unit coulomb_mV_per_mol using unit coulomb_mV_per_mol;
    unit J_per_millimol_K using unit J_per_millimol_K;
    unit coulomb_millivolt_per_mol using unit coulomb_millivolt_per_mol;
    unit picoL_per_mol using unit picoL_per_mol;
    unit femto_SF using unit femto_SF;
    unit picoL using unit picoL;
    unit pL_mM_per_ms_mol using unit pL_mM_per_ms_mol;
    unit mM4 using unit mM4;
    unit peta_SF using unit peta_SF;
    unit micro_SF using unit micro_SF;
    unit nano_SF using unit nano_SF;
    unit mega_SF using unit mega_SF;
    unit nM3_per_ps using unit nM3_per_ps;
    unit picoampere_s_per_cm using unit picoampere_s_per_cm;
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp Kapela_JUNE_25_Kapela_type as
    var ICa_SOC: picoampere {pub: out};
    var K_CSQN: mM {pub: in};
    var E_Na: mV {pub: out};
    var d_NCX: dimensionless {pub: in};
    var G_TG: dimensionless {pub: in};
    var I_SERCA: picoampere {pub: out};
    var k_DsGC: per_ms {pub: in};
    var V_50KCa0: mV {pub: out};
    var I_stim: picoampere {pub: out};
    var INa_NSC: picoampere {pub: out};
    var K_ClcGMP: mM {pub: in};
    var tau_fL: ms {pub: out};
    var k_pdecGMP: per_ms {pub: in};
    var Q_10: dimensionless {pub: in};
    var A1_sGC: mM {pub: out};
    var i_KCa: picoampere {pub: out};
    var k_DrsGC: per_ms {pub: in};
    var tau_SOC: ms {pub: in};
    var Ca_u_init: mM {pub: in};
    var Ca_r_init: mM {pub: in};
    var k_2sGC: per_ms {pub: in};
    var PCa_NSC: cm_per_s {pub: out};
    var Istim_amp: picoampere {pub: in};
    var dV_50KCaNO: mV {pub: in};
    var ICl_NaKCl: picoampere {pub: out};
    var P_KCa: dimensionless {pub: out};
    var tau_ps: ms {pub: in};
    var Ca_i_init: mM {pub: in};
    var V_50KCa: mV {pub: out};
    var R_leak: dimensionless {pub: in};
    var I_SOC: picoampere {pub: out};
    var g_NCX: picoampere {pub: in};
    var Ca_e: mM {pub: in};
    var K_mup: mM {pub: in};
    var R_cGMP: dimensionless {pub: out};
    var K_dKe: mM {pub: in};
    var tau_pf: ms {pub: in};
    var Vol_Ca: picoL {pub: in};
    var gNa_SOC: nanosiemens {pub: in};
    var dbar_L: dimensionless {pub: out};
    var Ibar_PMCA: picoampere {pub: in};
    var I_IP3: picoampere {pub: out};
    var ICa_NSC: picoampere {pub: out};
    var pbar_o: dimensionless {pub: out};
    var K_inhIP3: mM {pub: in};
    var B5_sGC: mM {pub: out};
    var R_NO0: dimensionless {pub: out};
    var tau_dL: ms {pub: out};
    var V_m_init: mV {pub: in};
    var I_NaK: picoampere {pub: out};
    var gamma_NCX: dimensionless {pub: in};
    var P_BKCa: cm3_per_s {pub: in};
    var tau_q2: ms {pub: in};
    var tau_q1: ms {pub: in};
    var alpha_Cl: dimensionless {pub: out};
    var P_Cl: dimensionless {pub: out};
    var Po_NSC: dimensionless {pub: out};
    var R_cGMP0: dimensionless {pub: out};
    var Na_dNai: mM {pub: in};
    var R_10_init: dimensionless {pub: in};
    var V_m0: mV {pub: in};
    var pbar_K: dimensionless {pub: out};
    var n_HNai: dimensionless {pub: in};
    var rho_rG: dimensionless {pub: out};
    var gamma_G: picoL_per_mol {pub: out};
    var alpha_G: per_ms {pub: in};
    var k_3sGC: per__ms_x_mM_ {pub: in};
    var z_Cl: dimensionless {pub: in};
    var gCa_SOC: nanosiemens {pub: in};
    var K_ClCa: mM {pub: in};
    var R_NaKClcGMP: dimensionless {pub: out};
    var A0_sGC: mM2 {pub: out};
    var Ibar_IP3: per_ms {pub: in};
    var R_01_init: dimensionless {pub: in};
    var INa_totm: picoampere {pub: out};
    var R_00: dimensionless {pub: out};
    var z_Ca: dimensionless {pub: in};
    var I_NSC: picoampere {pub: out};
    var Ibar_NaK: picoampere_per_picofarad {pub: in};
    var k_rG: per_ms {pub: in};
    var n_ClCa: dimensionless {pub: in};
    var R_TG: dimensionless {pub: in};
    var PK_NSC: cm_per_s {pub: out};
    var ICl_totm: picoampere {pub: out};
    var I_BKCa: picoampere {pub: out};
    var qbar: dimensionless {pub: out};
    var k_eG: per_ms {pub: in};
    var tau_rel: ms {pub: in};
    var cGMP_i_init: mM {pub: in};
    var NO: mM {pub: out};
    var k_m1sGC: per_ms {pub: in};
    var tau_sGC: ms {pub: out};
    var Pbar_SOC: dimensionless {pub: out};
    var I_rel: picoampere {pub: out};
    var F_per_RT: per_mV {pub: out};
    var z_Na: dimensionless {pub: in};
    var NE: mM {pub: out};
    var R_supSPG_init: dimensionless {pub: in};
    var k_degG: per_ms {pub: in};
    var Ibar_SERCA: picoampere {pub: in};
    var K_r2: per__ms_x_mM_ {pub: in};
    var K_r1: per__ms_x_mM2_ {pub: in};
    var Bbar_F: mM {pub: in};
    var I_PMCA: picoampere {pub: out};
    var R_ClcGMPmin: dimensionless {pub: in};
    var I_Kleak: picoampere {pub: out};
    var k_dG: per_ms {pub: in};
    var Na_i_init: mM {pub: in};
    var Vol_SRu: picoL {pub: in};
    var Na_e: mM {pub: in};
    var Vol_SRr: picoL {pub: in};
    var Cl_i_init: mM {pub: in};
    var k_pG: per_ms {pub: in};
    var n_HKe: dimensionless {pub: in};
    var Cl_e: mM {pub: in};
    var K_mPMCA: mM {pub: in};
    var K_mr2: per_ms {pub: in};
    var K_mr1: per_ms {pub: in};
    var dV_50KCacGMP: mV {pub: in};
    var ICa_totm: picoampere {pub: out};
    var phi_R: dimensionless {pub: out};
    var t: ms {pub: in};
    var g_ClCa: nanosiemens_per_picofarad {pub: in};
    var K_SOC: mM {pub: in};
    var P_VOCC: cm_per_s {pub: in};
    var IK_NSC: picoampere {pub: out};
    var r_hG0: pL_mM_per_ms_mol {pub: out};
    var K_dB: mM {pub: in};
    var phi_F: dimensionless {pub: out};
    var I_NCX: picoampere {pub: out};
    var n_ClcGMP: dimensionless {pub: in};
    var V_cGMPmax: mM_per_ms {pub: in};
    var K_2G: mM {pub: in};
    var N_Avo: per_mol {pub: in};
    var INa_NaKCl: picoampere {pub: out};
    var K_IP3: mM {pub: in};
    var xi_G: dimensionless {pub: in};
    var K_cG: mM {pub: in};
    var k_m2sGC: per_ms {pub: in};
    var NE_amp: mM {pub: in};
    var N_BKCa: per_cm2 {pub: in};
    var r_hG: per_ms {pub: out};
    var K_1G: mM {pub: in};
    var fbar_L: dimensionless {pub: out};
    var K_mpde: mM {pub: in};
    var Sbar_CM: mM {pub: in};
    var I_tr: picoampere {pub: out};
    var T: K {pub: in};
    var k_aG: per_ms {pub: in};
    var R: coulomb_x_mV_per__K_x_mol_ {pub: in};
    var Vbar_cGMP: mM_per_ms {pub: out};
    var Q: dimensionless {pub: out};
    var I_VOCC: picoampere {pub: out};
    var F: C_per_mol {pub: in};
    var IK_totm: picoampere {pub: out};
    var K_NSC: mM {pub: in};
    var k_onIP3: per__ms_x_mM_ {pub: in};
    var R_NCXcGMP: dimensionless {pub: out};
    var tau_tr: ms {pub: in};
    var I_ClCa: picoampere {pub: out};
    var INa_SOC: picoampere {pub: out};
    var K_i_init: mM {pub: in};
    var Vol_i: picoL {pub: in};
    var K_e: mM {pub: in};
    var K_actIP3: mM {pub: in};
    var NO_0: mM {pub: in};
    var K_ClCacGMP: mM {pub: out};
    var E_Cl: mV {pub: out};
    var R_NO: dimensionless {pub: out};
    var d_NSCmin: dimensionless {pub: in};
    var IK_NaKCl: picoampere {pub: out};
    var g_Kleak: nanosiemens {pub: in};
    var K_dCM: mM {pub: in};
    var PNa_NSC: cm_per_s {pub: in};
    var E_Ca: mV {pub: out};
    var C_m: picofarad {pub: in};
    var r_rG: per_ms {pub: in};
    var OPtot_IP3: dimensionless {pub: out};
    var L_NaKCl: mol2_per__J_x_s_x_cm2_ {pub: in};
    var k_1sGC: per__ms_x_mM_ {pub: in};
    var DAG: mM {pub: out};
    var A_m: cm2 {pub: out};
    var CSQNbar: mM {pub: in};
    var IP3_0: mM {pub: in};
    var deltaG_0: dimensionless {pub: out};
    var PIP2_T: dimensionless {pub: in};
    var E_K: mV {pub: out};
    var alpha_x15: dimensionless {pub: out};
    var alpha_x15_init: dimensionless {pub: out};
    var beta_x15: dimensionless {pub: out};
    var Pk_bar15: dimensionless {pub: out};
    var tau_Pk15: ms {pub: out};
    var G_k15: nanosiemens {pub: in};
    var I_Kv15: picoampere {pub: out};
    alpha_x15 = 0.0717{dimensionless}*pow(e, V_m/12.9290{mV});
    alpha_x15_init = 0.0717{dimensionless}*pow(e, V_m0/12.9290{mV});
    beta_x15 = 0.0533{dimensionless}*pow(e, V_m/191.7326{mV});
    Pk_bar15 = 1{dimensionless}/(1{dimensionless}+beta_x15/alpha_x15);
    tau_Pk15 = 1{dimensionless}/(alpha_x15+beta_x15)+0.3489{dimensionless};
    ode(Pk_15, t) = (Pk_bar15-Pk_15)/tau_Pk15;
    I_Kv15 = G_k15*Pk_15*(V_m-E_K);
    var alpha_x21: dimensionless {pub: out};
    var alpha_x21_init: dimensionless {pub: out};
    var beta_x21: dimensionless {pub: out};
    var beta_x21_init: dimensionless {pub: out};
    var Pk_bar21: dimensionless {pub: out};
    var Pk_21_init: dimensionless {pub: out};
    var tau_Pk21: ms {pub: out};
    var G_k21: nanosiemens {pub: in};
    var I_Kv21: picoampere {pub: out};
    alpha_x21 = 0.0404{dimensionless}*exp(V_m/10.5223{mV});
    alpha_x21_init = 0.0404{dimensionless}*exp(V_m0/10.5223{mV});
    beta_x21 = 0.0355{dimensionless}*pow(e, V_m/221.4151{mV});
    beta_x21_init = 0.0355{dimensionless}*pow(e, V_m0/221.4151{mV});
    Pk_bar21 = 1{dimensionless}/(1{dimensionless}+beta_x21/alpha_x21);
    Pk_21_init = 1{dimensionless}/(1{dimensionless}+beta_x21_init/alpha_x21_init);
    tau_Pk21 = 1{dimensionless}/(alpha_x21+beta_x21)+11.4616{dimensionless};
    ode(Pk_21, t) = (Pk_bar21-Pk_21)/tau_Pk21;
    I_Kv21 = G_k21*Pk_21*(V_m-E_K);
    var z_K: dimensionless {pub: in};
    gamma_G = N_Avo*Vol_i;
    var RT: coulomb_millivolt_per_mol {pub: out};
    RT = R*T;
    F_per_RT = F/RT;
    A_m = C_m/1e6{picofarad_per_cm2};
    PK_NSC = PNa_NSC*1.06{dimensionless};
    PCa_NSC = PNa_NSC*4.54{dimensionless};
    Q = pow(Q_10, (T-309.15{K})/10{K});
    B5_sGC = k_2sGC/k_3sGC;
    A0_sGC = ((k_m1sGC+k_2sGC)*k_DsGC+k_m1sGC*k_m2sGC)/(k_1sGC*k_3sGC);
    A1_sGC = ((k_1sGC+k_3sGC)*k_DsGC+(k_2sGC+k_m2sGC)*k_1sGC)/(k_1sGC*k_3sGC);
    ode(R_supSG, t) = k_rG*xi_G*R_TG-(k_rG+k_pG*NE/(K_1G+NE))*R_supSG-k_rG*R_supSPG;
    ode(V_m, t) = 1{dimensionless}/C_m*((I_VOCC+I_BKCa+I_Kv21+I_Kv15+I_Kleak+I_NSC+I_SOC+I_ClCa+I_PMCA+I_NCX+I_NaK)*(-1{dimensionless})+I_stim);
    ode(R_supSPG, t) = NE*(k_pG*R_supSG/(K_1G+NE)-k_eG*R_supSPG/(K_2G+NE));
    ode(IP3, t) = (r_hG*PIP2/gamma_G-k_degG*IP3*1e-15{peta_SF})*1e15{femto_SF};
    ode(PIP2, t) = (r_hG+r_rG)*PIP2*(-1{dimensionless})-r_rG*gamma_G*IP3*1e-15{peta_SF}+r_rG*PIP2_T;
    ode(G, t) = k_aG*(deltaG_0+rho_rG)*(G_TG-G)-k_dG*G;
    ode(d_L, t) = (dbar_L-d_L)/tau_dL;
    ode(f_L, t) = (fbar_L-f_L)/tau_fL;
    ode(Ca_i, t) = (ICa_totm+I_SERCA-I_rel-I_IP3)/(z_Ca*F*Vol_Ca)/(1{dimensionless}+Sbar_CM*K_dCM/sqr(K_dCM+Ca_i)+Bbar_F*K_dB/sqr(K_dB+Ca_i))*(-1{dimensionless});
    ode(p_f, t) = (pbar_o-p_f)/tau_pf;
    ode(V_cGMP, t) = (Vbar_cGMP-V_cGMP)/tau_sGC;
    ode(p_s, t) = (pbar_o-p_s)/tau_ps;
    ode(cGMP_i, t) = V_cGMP-k_pdecGMP*sqr(cGMP_i)/(cGMP_i+K_mpde);
    ode(Na_i, t) = INa_totm/(F*Vol_i)*(-1{dimensionless});
    ode(K_i, t) = IK_totm/(F*Vol_i)*(-1{dimensionless});
    ode(Cl_i, t) = ICl_totm/(z_Cl*F*Vol_i)*(-1{dimensionless});
    E_K = 1{dimensionless}/(z_K*F_per_RT)*ln(K_e/K_i);
    ode(P_SOC, t) = (Pbar_SOC-P_SOC)/tau_SOC;
    E_Na = 1{dimensionless}/(z_Na*F_per_RT)*ln(Na_e/Na_i);
    ode(h_IP3, t) = k_onIP3*(K_inhIP3-(Ca_i+K_inhIP3)*h_IP3);
    E_Ca = 1{dimensionless}/(z_Ca*F_per_RT)*ln(Ca_e/Ca_i);
    E_Cl = 1{dimensionless}/(z_Cl*F_per_RT)*ln(Cl_e/Cl_i);
    dbar_L = 1{dimensionless}/(1{dimensionless}+exp(V_m/8.3{mV}*(-1{dimensionless})));
    fbar_L = 1{dimensionless}/(1{dimensionless}+exp((V_m+42{mV})/9.1{mV}));
    tau_dL = 2.5{ms}*exp(sqr((V_m+40{mV})/30{mV})*(-1{dimensionless}))+1.15{ms};
    tau_fL = 65{ms}*exp(sqr((V_m+35{mV})/25{mV})*(-1{dimensionless}))+45{ms};
    I_VOCC = A_m*P_VOCC*d_L*f_L*V_m*sqr(z_Ca)*F*F_per_RT*(Ca_e-Ca_i*exp(V_m*z_Ca*F_per_RT))/(1{dimensionless}-exp(V_m*z_Ca*F_per_RT))*1e6{micro_SF};
    P_KCa = p_f*.17{dimensionless}+p_s*.83{dimensionless};
    i_KCa = P_BKCa*V_m*F*F_per_RT*(K_e-K_i*exp(V_m*F_per_RT))/(1{dimensionless}-exp(V_m*F_per_RT))*1e6{micro_SF};
    ode(Ca_u, t) = (I_SERCA-I_tr-I_IP3)/(z_Ca*F*Vol_SRu);
    ode(Ca_r, t) = (I_tr-I_rel)/(z_Ca*F*Vol_SRr)/(1{dimensionless}+CSQNbar*K_CSQN/sqr(K_CSQN+Ca_r));
    ode(R_10, t) = K_r1*sqr(Ca_i)*R_00-(K_mr1+K_r2*Ca_i)*R_10+K_mr2*R_11;
    ode(R_11, t) = K_r2*Ca_i*R_10-(K_mr1+K_mr2)*R_11+K_r1*sqr(Ca_i)*R_01;
    R_NO = NO/(NO+2e-4{mM});
    ode(R_01, t) = K_r2*Ca_i*R_00+K_mr1*R_11-(K_mr2+K_r1*sqr(Ca_i))*R_01;
    R_cGMP = sqr(cGMP_i)/(sqr(cGMP_i)+sqr(.0015{mM}));
    V_50KCa = 41.7{mV}*log(Ca_i/1{mM})*(-1{dimensionless})-128.2{mV}-dV_50KCaNO*R_NO-dV_50KCacGMP*R_cGMP;
    pbar_o = 1{dimensionless}/(1{dimensionless}+exp((V_m-V_50KCa)/18.25{mV}*(-1{dimensionless})));
    I_BKCa = A_m*N_BKCa*P_KCa*i_KCa;
    pbar_K = 1{dimensionless}/(1{dimensionless}+exp((V_m+11{mV})/15{mV}*(-1{dimensionless})));
    qbar = 1{dimensionless}/(1{dimensionless}+exp((V_m+40{mV})/14{mV}));
    I_Kleak = g_Kleak*(V_m-E_K);
    Po_NSC = .4344{dimensionless}+.5656{dimensionless}/(1{dimensionless}+exp((V_m-47.12{mV})/24.24{mV}*(-1{dimensionless})));
    DAG = IP3;
    INa_NSC = A_m*(DAG/(DAG+K_NSC)+d_NSCmin)*Po_NSC*PNa_NSC*V_m*F*F_per_RT*(Na_e-Na_i*exp(V_m*F_per_RT))/(1{dimensionless}-exp(V_m*F_per_RT))*1e6{micro_SF};
    IK_NSC = A_m*(DAG/(DAG+K_NSC)+d_NSCmin)*Po_NSC*PK_NSC*V_m*F*F_per_RT*(K_e-K_i*exp(V_m*F_per_RT))/(1{dimensionless}-exp(V_m*F_per_RT))*1e6{micro_SF};
    ICa_NSC = A_m*d_NSCmin*Po_NSC*PCa_NSC*V_m*sqr(z_Ca)*F*F_per_RT*(Ca_e-Ca_i*exp(z_Ca*V_m*F_per_RT))/(1{dimensionless}-exp(z_Ca*V_m*F_per_RT))*1e6{micro_SF};
    I_NSC = INa_NSC+IK_NSC+ICa_NSC;
    Pbar_SOC = 1{dimensionless}/(1{dimensionless}+Ca_u/K_SOC);
    INa_SOC = gNa_SOC*P_SOC*(V_m-E_Na);
    ICa_SOC = gCa_SOC*P_SOC*(V_m-E_Ca);
    I_SOC = INa_SOC+ICa_SOC;
    alpha_Cl = pow(cGMP_i/1{mM}, n_ClcGMP)/(pow(cGMP_i/1{mM}, n_ClcGMP)+pow(K_ClcGMP/1{mM}, n_ClcGMP));
    K_ClCacGMP = (1{dimensionless}-alpha_Cl*.9{dimensionless})*4e-4{mM};
    P_Cl = R_ClcGMPmin*pow(Ca_i/1{mM}, n_ClCa)/(pow(Ca_i/1{mM}, n_ClCa)+pow(K_ClCa/1{mM}, n_ClCa))+alpha_Cl*pow(Ca_i/1{mM}, n_ClCa)/(pow(Ca_i/1{mM}, n_ClCa)+pow(K_ClCacGMP/1{mM}, n_ClCa));
    I_ClCa = C_m*g_ClCa*P_Cl*(V_m-E_Cl);
    I_PMCA = Ibar_PMCA*Ca_i/(Ca_i+K_mPMCA);
    R_NCXcGMP = 1{dimensionless}+cGMP_i/(cGMP_i+.045{mM})*.55{dimensionless};
    phi_F = exp(gamma_NCX*V_m*F_per_RT);
    phi_R = exp((gamma_NCX-1{dimensionless})*V_m*F_per_RT);
    I_NCX = g_NCX*R_NCXcGMP*(pow(Na_i, 3{dimensionless})*Ca_e*phi_F-pow(Na_e, 3{dimensionless})*Ca_i*phi_R)/(1{mM4}+d_NCX*(pow(Na_e, 3{dimensionless})*Ca_i+pow(Na_i, 3{dimensionless})*Ca_e));
    I_NaK = C_m*Ibar_NaK*Q*pow(K_e/1{mM}, n_HKe)/(pow(K_e/1{mM}, n_HKe)+pow(K_dKe/1{mM}, n_HKe))*pow(Na_i/1{mM}, n_HNai)/(pow(Na_i/1{mM}, n_HNai)+pow(Na_dNai/1{mM}, n_HNai))*(V_m+150{mV})/(V_m+200{mV});
    R_NaKClcGMP = 1{dimensionless}+cGMP_i/(cGMP_i+.0064{mM})*3.5{dimensionless};
    ICl_NaKCl = R_NaKClcGMP*z_Cl*A_m*L_NaKCl*F*R*T*log(Na_e/Na_i*K_e/K_i*sqr(Cl_e/Cl_i))*(-1e9{nano_SF});
    INa_NaKCl = ICl_NaKCl*(-0.5{dimensionless});
    IK_NaKCl = ICl_NaKCl*(-0.5{dimensionless});
    OPtot_IP3 = pow(IP3/(IP3+K_IP3)*Ca_i/(Ca_i+K_actIP3)*h_IP3, 3{dimensionless});
    I_IP3 = Ibar_IP3*z_Ca*Vol_Ca*F*OPtot_IP3*(Ca_u-Ca_i);
    I_SERCA = Ibar_SERCA*Ca_i/(Ca_i+K_mup);
    I_tr = (Ca_u-Ca_r)*z_Ca*F*Vol_SRu/tau_tr;
    I_rel = (sqr(R_10)+R_leak)*(Ca_r-Ca_i)*z_Ca*F*Vol_SRr/tau_rel;
    R_00 = 1{dimensionless}-R_10-R_11-R_01;
    r_hG0 = k_degG*gamma_G*IP3_init/PIP2_init;
    rho_rG = NE*R_supSG/(xi_G*R_TG*(K_1G+NE));
    r_hG = alpha_G*Ca_i/(Ca_i+K_cG)*G;
    Vbar_cGMP = V_cGMPmax*(B5_sGC*NO+sqr(NO))/(A0_sGC+A1_sGC*NO+sqr(NO));
    tau_sGC = sel
      case (Vbar_cGMP-V_cGMP == 0{mM_per_ms}) or (Vbar_cGMP-V_cGMP > 0{mM_per_ms}):
        1{dimensionless}/(k_3sGC*NO+k_DrsGC);
      otherwise:
        1{dimensionless}/(k_m2sGC+k_DrsGC);
    endsel;
    ICa_totm = ICa_SOC+I_VOCC-I_NCX*2{dimensionless}+I_PMCA+ICa_NSC;
    INa_totm = INa_NaKCl+INa_SOC+I_NaK*3{dimensionless}+I_NCX*3{dimensionless}+INa_NSC;
    IK_totm = IK_NaKCl+I_BKCa+I_Kv21+I_Kv15+IK_NSC+I_Kleak-I_NaK*2{dimensionless};
    ICl_totm = ICl_NaKCl+I_ClCa;
    NO = 0{mM};
    deltaG_0 = k_dG*0{dimensionless}/(k_aG*(G_TG-0{dimensionless}));
    I_stim = sel
      case (t == 0{ms}) or (t > 0{ms}):
        0{picoampere};
      otherwise:
        0{picoampere};
    endsel;
    NE = sel
      case (t < 10000{ms}) or (t == 70000{ms}) or (t > 70000{ms}):
        0{mM};
      otherwise:
        0.001{mM};
    endsel;
    R_NO0 = NO_0/(NO_0+2e-4{mM});
    R_cGMP0 = sqr(cGMP_i_init)/(sqr(cGMP_i_init)+sqr(5.5e-4{uM})*1e-6{mega_SF});
    V_50KCa0 = -41.7{mV}*log(Ca_i_init/1{mM})-128.2{mV};
    var p_f: dimensionless {init: p_f_init, pub: out};
    var p_f_init: dimensionless {pub: out};
    p_f_init = 1{dimensionless}/(1{dimensionless}+exp((V_m0-V_50KCa0)/18.25{mV}*(-1{dimensionless})));
    var Ca_u: mM {init: Ca_u_init, pub: out};
    var Ca_r: mM {init: Ca_r_init, pub: out};
    var Ca_i: mM {init: Ca_i_init, pub: out};
    var f_L: dimensionless {init: f_L_init, pub: out};
    var f_L_init: dimensionless {pub: out};
    f_L_init = 1{dimensionless}/(1{dimensionless}+exp((V_m0+42{mV})/9.1{mV}));
    var d_L: dimensionless {init: d_L_init, pub: out};
    var d_L_init: dimensionless {pub: out};
    d_L_init = 1{dimensionless}/(1{dimensionless}+exp(V_m0/8.3{mV}*(-1{dimensionless})));
    var P_SOC: dimensionless {init: P_SOC_init, pub: out};
    var P_SOC_init: dimensionless {pub: in};
    var V_cGMP: mM_per_ms {init: V_cGMP_init, pub: out};
    var V_cGMP_init: mM_per_ms {pub: in};
    var IP3: mM {init: IP3_init, pub: out};
    var IP3_init: mM {pub: in};
    var V_m: mV {init: V_m_init, pub: out};
    var R_11: dimensionless {init: R_11_init, pub: out};
    var R_11_init: dimensionless {pub: in};
    var R_10: dimensionless {init: R_10_init, pub: out};
    var R_01: dimensionless {init: R_01_init, pub: out};
    var cGMP_i: mM {init: cGMP_i_init, pub: out};
    var h_IP3: dimensionless {init: h_IP3_init, pub: out};
    var h_IP3_init: dimensionless {pub: out};
    h_IP3_init = K_inhIP3/(Ca_i_init+K_inhIP3);
    var R_supSPG: dimensionless {init: R_supSPG_init, pub: out};
    var Na_i: mM {init: Na_i_init, pub: out};
    var PIP2: dimensionless {init: PIP2_init, pub: out};
    var PIP2_init: dimensionless {pub: out};
    PIP2_init = PIP2_T-(1{dimensionless}+k_degG/r_rG)*gamma_G*IP3_init*1e-15{femto_SF};
    var Cl_i: mM {init: Cl_i_init, pub: out};
    var R_supSG: dimensionless {init: R_supSG_init, pub: out};
    var R_supSG_init: dimensionless {pub: out};
    R_supSG_init = R_TG*xi_G;
    var G: dimensionless {init: G_init, pub: out};
    var G_init: dimensionless {pub: out};
    G_init = r_hG0*(K_cG+Ca_i_init)/(alpha_G*Ca_i_init)*1e-15{dimensionless};
    var K_i: mM {init: K_i_init, pub: out};
    var p_s: dimensionless {init: p_s_init, pub: out};
    var p_s_init: dimensionless {pub: out};
    p_s_init = 1{dimensionless}/(1{dimensionless}+exp((V_m0-V_50KCa0)/18.25{mV}*(-1{dimensionless})));
    var Pk_15: dimensionless {init: Pk_15_init, pub: out};
    var Pk_15_init: dimensionless {pub: out};
    var beta_x15_init: dimensionless {pub: out};
    beta_x15_init = 0.0533{dimensionless}*pow(e, V_m0/191.7326{dimensionless});
    Pk_15_init = 1{dimensionless}/(1{dimensionless}+beta_x15_init/alpha_x15_init);
    var Pk_21: dimensionless {init: Pk_21_init, pub: out};
  enddef;
enddef;
