def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_millimol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit metre {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit metre {expo: 3};
    unit mM;
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit metre {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit metre {expo: -3};
  enddef;
  def unit umeter3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit L_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    unit metre {expo: -3, pref: deci};
  enddef;

  def comp parameters as
    var u_0_inlet_arteriole: J_per_m3 {init: 2666, interface: public};
    var E_inlet_arteriole: J_per_m3 {init: 300000, interface: public};
    var l_inlet_arteriole: metre {init: 0.0003, interface: public};
    var r_0_inlet_arteriole: metre {init: 0.000006, interface: public};
    var theta_inlet_arteriole: dimensionless {init: 0, interface: public};
    var u_ext_inlet_arteriole: J_per_m3 {init: 133, interface: public};
    var v_in_inlet_arteriole: m3_per_s {init: 3.77E-12, interface: public};
    var q_C_init_B1V0: m3 {init: 0, interface: public};
    var E_B1V0: J_per_m3 {init: 25000, interface: public};
    var l_B1V0: metre {init: 0.000123, interface: public};
    var r_B1V0: metre {init: 0.0000035, interface: public};
    var u_ext_B1V0: J_per_m3 {init: -16, interface: public};
    var q_C_init_PB1V1: m3 {init: 0, interface: public};
    var E_PB1V1: J_per_m3 {init: 25000, interface: public};
    var l_PB1V1: metre {init: 0.000015, interface: public};
    var r_PB1V1: metre {init: 0.00000263, interface: public};
    var u_ext_PB1V1: J_per_m3 {init: -16, interface: public};
    var E_B1V1: J_per_m3 {init: 25000, interface: public};
    var l_B1V1: metre {init: 0.000078, interface: public};
    var r_0_B1V1: metre {init: 0.00000325, interface: public};
    var theta_B1V1: dimensionless {init: 0, interface: public};
    var u_ext_B1V1: J_per_m3 {init: -16, interface: public};
    var E_B1V2: J_per_m3 {init: 25000, interface: public};
    var l_B1V2: metre {init: 0.0002, interface: public};
    var r_0_B1V2: metre {init: 0.000003, interface: public};
    var u_ext_B1V2: J_per_m3 {init: -16, interface: public};
    var theta_B1V2: dimensionless {init: 0, interface: public};
    var u_ext_PB1V3: J_per_m3 {init: -16, interface: public};
    var E_PB1V3: J_per_m3 {init: 25000, interface: public};
    var l_PB1V3: metre {init: 0.000015, interface: public};
    var r_PB1V3: metre {init: 0.00000225, interface: public};
    var q_C_init_B1V3: m3 {init: 0, interface: public};
    var E_B1V3: J_per_m3 {init: 25000, interface: public};
    var l_B1V3: metre {init: 0.000051, interface: public};
    var r_B1V3: metre {init: 0.000003, interface: public};
    var r_0_B1V3: metre {init: 0.000003, interface: public};
    var u_ext_B1V3: J_per_m3 {init: -16, interface: public};
    var q_C_init_PB1V4: m3 {init: 0, interface: public};
    var E_PB1V4: J_per_m3 {init: 25000, interface: public};
    var l_PB1V4: metre {init: 0.000015, interface: public};
    var r_PB1V4: metre {init: 0.00000225, interface: public};
    var u_ext_PB1V4: J_per_m3 {init: -16, interface: public};
    var E_B1V4: J_per_m3 {init: 25000, interface: public};
    var l_B1V4: metre {init: 0.000025, interface: public};
    var r_0_B1V4: metre {init: 0.00000275, interface: public};
    var theta_B1V4: dimensionless {init: 0, interface: public};
    var u_ext_B1V4: J_per_m3 {init: -16, interface: public};
    var u_ext_PTC1: J_per_m3 {init: -16, interface: public};
    var E_PTC1: J_per_m3 {init: 25000, interface: public};
    var l_PTC1: metre {init: 0.000015, interface: public};
    var r_PTC1: metre {init: 0.00000206, interface: public};
    var q_C_init_TC1: m3 {init: 0, interface: public};
    var E_TC1: J_per_m3 {init: 25000, interface: public};
    var l_TC1: metre {init: 0.0000509, interface: public};
    var r_TC1: metre {init: 0.00000275, interface: public};
    var u_ext_TC1: J_per_m3 {init: -16, interface: public};
    var u_out_TC1: J_per_m3 {init: 3333, interface: public};
    var u_ext_PB1V6: J_per_m3 {init: -16, interface: public};
    var E_PB1V6: J_per_m3 {init: 25000, interface: public};
    var l_PB1V6: metre {init: 0.000015, interface: public};
    var r_PB1V6: metre {init: 0.00000225, interface: public};
    var q_C_init_B1V6: m3 {init: 0, interface: public};
    var E_B1V6: J_per_m3 {init: 25000, interface: public};
    var l_B1V6: metre {init: 0.0000183, interface: public};
    var r_B1V6: metre {init: 0.00000275, interface: public};
    var r_0_B1V6: metre {init: 0.00000275, interface: public};
    var u_ext_B1V6: J_per_m3 {init: -16, interface: public};
    var q_C_init_TC2: m3 {init: 0, interface: public};
    var E_TC2: J_per_m3 {init: 25000, interface: public};
    var l_TC2: metre {init: 0.0000538, interface: public};
    var r_TC2: metre {init: 0.0000025, interface: public};
    var u_ext_TC2: J_per_m3 {init: -16, interface: public};
    var u_out_TC2: J_per_m3 {init: 3333, interface: public};
    var q_C_init_TC3: m3 {init: 0, interface: public};
    var E_TC3: J_per_m3 {init: 25000, interface: public};
    var l_TC3: metre {init: 0.000172, interface: public};
    var r_TC3: metre {init: 0.0000025, interface: public};
    var u_ext_TC3: J_per_m3 {init: -16, interface: public};
    var u_out_TC3: J_per_m3 {init: 3333, interface: public};
    var q_C_init_B1V9: m3 {init: 0, interface: public};
    var E_B1V9: J_per_m3 {init: 25000, interface: public};
    var l_B1V9: metre {init: 0.0000353, interface: public};
    var r_B1V9: metre {init: 0.000003, interface: public};
    var u_ext_B1V9: J_per_m3 {init: -16, interface: public};
    var q_C_init_B2V0: m3 {init: 0, interface: public};
    var E_B2V0: J_per_m3 {init: 25000, interface: public};
    var l_B2V0: metre {init: 0.000097, interface: public};
    var r_B2V0: metre {init: 0.0000035, interface: public};
    var r_0_B2V0: metre {init: 0.0000035, interface: public};
    var u_ext_B2V0: J_per_m3 {init: -16, interface: public};
    var q_C_init_PB0V1: m3 {init: 0, interface: public};
    var E_PB0V1: J_per_m3 {init: 25000, interface: public};
    var l_PB0V1: metre {init: 0.000015, interface: public};
    var r_PB0V1: metre {init: 0.00000263, interface: public};
    var u_ext_PB0V1: J_per_m3 {init: -16, interface: public};
    var q_C_init_B0V1: m3 {init: 0, interface: public};
    var E_B0V1: J_per_m3 {init: 25000, interface: public};
    var l_B0V1: metre {init: 0.0000696, interface: public};
    var r_B0V1: metre {init: 0.00000325, interface: public};
    var u_ext_B0V1: J_per_m3 {init: -16, interface: public};
    var u_ext_PB2V1: J_per_m3 {init: -16, interface: public};
    var E_PB2V1: J_per_m3 {init: 25000, interface: public};
    var l_PB2V1: metre {init: 0.000015, interface: public};
    var r_PB2V1: metre {init: 0.00000263, interface: public};
    var q_C_init_B2V1: m3 {init: 0, interface: public};
    var E_B2V1: J_per_m3 {init: 25000, interface: public};
    var l_B2V1: metre {init: 0.0000665, interface: public};
    var r_B2V1: metre {init: 0.00000325, interface: public};
    var r_0_B2V1: metre {init: 0.00000325, interface: public};
    var u_ext_B2V1: J_per_m3 {init: -16, interface: public};
    var q_C_init_PB2V3: m3 {init: 0, interface: public};
    var E_PB2V3: J_per_m3 {init: 25000, interface: public};
    var l_PB2V3: metre {init: 0.000015, interface: public};
    var r_PB2V3: metre {init: 0.00000244, interface: public};
    var u_ext_PB2V3: J_per_m3 {init: -16, interface: public};
    var q_C_init_B2V3: m3 {init: 0, interface: public};
    var E_B2V3: J_per_m3 {init: 25000, interface: public};
    var l_B2V3: metre {init: 0.0000217, interface: public};
    var r_B2V3: metre {init: 0.000003, interface: public};
    var u_ext_B2V3: J_per_m3 {init: -16, interface: public};
    var u_ext_PTC9: J_per_m3 {init: -16, interface: public};
    var theta_PTC9: dimensionless {init: 0, interface: public};
    var E_PTC9: J_per_m3 {init: 25000, interface: public};
    var r_0_PTC9: metre {init: 0.00000225, interface: public};
    var l_PTC9: metre {init: 0.000015, interface: public};
    var q_C_init_TC9: m3 {init: 0, interface: public};
    var E_TC9: J_per_m3 {init: 25000, interface: public};
    var l_TC9: metre {init: 0.000366, interface: public};
    var r_TC9: metre {init: 0.00000275, interface: public};
    var u_ext_TC9: J_per_m3 {init: -16, interface: public};
    var u_out_TC9: J_per_m3 {init: 3333, interface: public};
    var u_ext_PB2V2: J_per_m3 {init: -16, interface: public};
    var E_PB2V2: J_per_m3 {init: 25000, interface: public};
    var l_PB2V2: metre {init: 0.000015, interface: public};
    var r_PB2V2: metre {init: 0.00000244, interface: public};
    var q_C_init_B2V2: m3 {init: 0, interface: public};
    var E_B2V2: J_per_m3 {init: 25000, interface: public};
    var l_B2V2: metre {init: 0.0002, interface: public};
    var r_B2V2: metre {init: 0.000003, interface: public};
    var r_0_B2V2: metre {init: 0.000003, interface: public};
    var u_ext_B2V2: J_per_m3 {init: -16, interface: public};
    var q_C_init_PTC4: m3 {init: 0, interface: public};
    var E_PTC4: J_per_m3 {init: 25000, interface: public};
    var l_PTC4: metre {init: 0.000015, interface: public};
    var r_PTC4: metre {init: 0.00000225, interface: public};
    var u_ext_PTC4: J_per_m3 {init: -16, interface: public};
    var q_C_init_TC4: m3 {init: 0, interface: public};
    var E_TC4: J_per_m3 {init: 25000, interface: public};
    var l_TC4: metre {init: 0.000025, interface: public};
    var r_TC4: metre {init: 0.00000275, interface: public};
    var u_ext_TC4: J_per_m3 {init: -16, interface: public};
    var u_out_TC4: J_per_m3 {init: 3333, interface: public};
    var u_ext_PTC5: J_per_m3 {init: -16, interface: public};
    var E_PTC5: J_per_m3 {init: 25000, interface: public};
    var l_PTC5: metre {init: 0.000015, interface: public};
    var r_PTC5: metre {init: 0.00000225, interface: public};
    var q_C_init_TC5: m3 {init: 0, interface: public};
    var E_TC5: J_per_m3 {init: 25000, interface: public};
    var l_TC5: metre {init: 0.000234, interface: public};
    var r_TC5: metre {init: 0.00000275, interface: public};
    var u_ext_TC5: J_per_m3 {init: -16, interface: public};
    var u_out_TC5: J_per_m3 {init: 3333, interface: public};
  enddef;

  def comp parameters_global as
    var beta_g: dimensionless {init: 0, interface: public};
    var rho: kg_per_m3 {init: 1050, interface: public};
    var mu: Js_per_m3 {init: 0.0025, interface: public};
    var g: m_per_s2 {init: 9.81, interface: public};
    var a_vessel: dimensionless {init: 0.2802, interface: public};
    var b_vessel: per_m {init: -505.3, interface: public};
    var c_vessel: dimensionless {init: 0.1324, interface: public};
    var d_vessel: per_m {init: -11.14, interface: public};
    var mu_plasma: Js_per_m3 {init: 0.001, interface: public};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp inlet_arteriole_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u_C: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext;
    u_d = u_0+u_C_d+u_ext;
  enddef;

  def comp B1V0_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp PB1V1_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u-u_out-v*R)/I;
    v = (u-u_out)/R;
    ode(q_C, t) = v_in-v;
    u = q_C/C+u_ext;
  enddef;

  def comp B1V1_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u_C: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    r = sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r_0*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_0*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I   = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    // if C or R depends on a variable r, modle becomes insanely stiff
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    // ode(v, t)     = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    v = (u-u_d)/R;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    // u             = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    u = u_C+u_ext;
    // u_d           = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
    u_d = u_C_d+u_ext;
  enddef;

  def comp B1V2_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r_0*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_0*1e6{dimensionless}, 0.645{dimensionless}));
    // used r_0, otherwise model extremely stiff
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I   = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    // ode(v, t)   = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    v = (u_in-u)/R;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    // u           = u_0+u_C+u_ext+R_v*(v-v_out);
    u = u_C+u_ext;
  enddef;

  def comp PB1V3_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R)/I;
    v = (u_in-u)/R;
    ode(q_C, t) = v-v_out;
    // constitutive laws
    u = q_C/C+u_ext;
  enddef;

  def comp B1V3_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var v_out_total: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var r_0: metre {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r_0)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // r     = sqrt(q/(pi*l)); inclusion of this formula and r pub: outmake model insanely stiff, unsolvable
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t) = (u_in-u-R*v)/I;
    v = (u_in-u)/R;
    // the below allows non constant compliance
    v_out_total = v_out_1+v_out_2;
    ode(q_C, t) = v-v_out_total;
    u = q_C/C+u_ext;
  enddef;

  def comp PB1V4_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp B1V4_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r_0*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_0*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I   = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    // ode(v, t)     = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    v = (u-u_d)/R;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    // u             = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    // u_d           = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out);
    u = u_C+u_ext;
    u_d = u_C_d+u_ext;
  enddef;

  def comp PTC1_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R)/I;
    v = (u_in-u)/R;
    ode(q_C, t) = v-v_out;
    // constitutive laws
    u = q_C/C+u_ext;
  enddef;

  def comp TC1_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp PB1V6_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R)/I;
    v = (u_in-u)/R;
    ode(q_C, t) = v-v_out;
    // constitutive laws
    u = q_C/C+u_ext;
  enddef;

  def comp B1V6_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var v_out_total: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var r_0: metre {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r_0)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // r     = sqrt(q/(pi*l)); inclusion of this formula and r pub: outmake model insanely stiff, unsolvable
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t) = (u_in-u-R*v)/I;
    v = (u_in-u)/R;
    // the below allows non constant compliance
    v_out_total = v_out_1+v_out_2;
    ode(q_C, t) = v-v_out_total;
    u = q_C/C+u_ext;
  enddef;

  def comp TC2_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp TC3_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp B1V9_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp B2V0_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var v_out_total: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var r_0: metre {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r_0)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // r     = sqrt(q/(pi*l)); inclusion of this formula and r pub: outmake model insanely stiff, unsolvable
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t) = (u_in-u-R*v)/I;
    v = (u_in-u)/R;
    // the below allows non constant compliance
    v_out_total = v_out_1+v_out_2;
    ode(q_C, t) = v-v_out_total;
    u = q_C/C+u_ext;
  enddef;

  def comp PB0V1_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp B0V1_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u-u_out-v*R)/I;
    v = (u-u_out)/R;
    ode(q_C, t) = v_in-v;
    u = q_C/C+u_ext;
  enddef;

  def comp PB2V1_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R)/I;
    v = (u_in-u)/R;
    ode(q_C, t) = v-v_out;
    // constitutive laws
    u = q_C/C+u_ext;
  enddef;

  def comp B2V1_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var v_out_total: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var r_0: metre {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r_0)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // r     = sqrt(q/(pi*l)); inclusion of this formula and r pub: outmake model insanely stiff, unsolvable
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t) = (u_in-u-R*v)/I;
    v = (u_in-u)/R;
    // the below allows non constant compliance
    v_out_total = v_out_1+v_out_2;
    ode(q_C, t) = v-v_out_total;
    u = q_C/C+u_ext;
  enddef;

  def comp PB2V3_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp B2V3_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u-u_out-v*R)/I;
    v = (u-u_out)/R;
    ode(q_C, t) = v_in-v;
    u = q_C/C+u_ext;
  enddef;

  def comp PTC9_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in_sum: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r_0*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_0*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I   = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    // ode(v, t)   = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    v = (u-u_out)/R;
    ode(q_C, t) = v_in_sum-v;
    u_C = q_C/C;
    // u           = u_0+u_C+u_ext+R_v*(v_in_sum-v);
    u = u_C+u_ext;
  enddef;

  def comp TC9_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u-u_out-v*R)/I;
    v = (u-u_out)/R;
    ode(q_C, t) = v_in-v;
    u = q_C/C+u_ext;
  enddef;

  def comp PB2V2_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R)/I;
    v = (u_in-u)/R;
    ode(q_C, t) = v-v_out;
    // constitutive laws
    u = q_C/C+u_ext;
  enddef;

  def comp B2V2_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var v_out_total: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var r_0: metre {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r_0)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // r     = sqrt(q/(pi*l)); inclusion of this formula and r pub: outmake model insanely stiff, unsolvable
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t) = (u_in-u-R*v)/I;
    v = (u_in-u)/R;
    // the below allows non constant compliance
    v_out_total = v_out_1+v_out_2;
    ode(q_C, t) = v-v_out_total;
    u = q_C/C+u_ext;
  enddef;

  def comp PTC4_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp TC4_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u-u_out-v*R)/I;
    v = (u-u_out)/R;
    ode(q_C, t) = v_in-v;
    u = q_C/C+u_ext;
  enddef;

  def comp PTC5_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var r: metre {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R)/I;
    v = (u_in-u)/R;
    ode(q_C, t) = v-v_out;
    // constitutive laws
    u = q_C/C+u_ext;
  enddef;

  def comp TC5_module as
    var t: second {interface: public};
    var rho: kg_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp terminal_venous_connection as
  enddef;

  def comp generic_junction_connection as
    var v_B2V3_Min: m3_per_s {interface: public};
    var v_B0V1_Min: m3_per_s {interface: public};
    var v_d_B1V9_Min: m3_per_s {interface: public};
    var v_PTC9_sum_Min: m3_per_s {interface: public};
    v_PTC9_sum_Min = v_B2V3_Min+v_B0V1_Min+v_d_B1V9_Min;
  enddef;

  def comp sum_blood_volume as
  enddef;

  def comp inlet_arteriole as
    var u: J_per_m3 {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q_C: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var v_in: m3_per_s {interface: public};
  enddef;

  def comp B1V0 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp PB1V1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp B1V1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var r: metre {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp B1V2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp PB1V3 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp B1V3 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var v_out_total: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp PB1V4 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp B1V4 as
    var u: J_per_m3 {interface: public};
    var u_d: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_C: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
  enddef;

  def comp PTC1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp TC1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_out: J_per_m3 {interface: public};
  enddef;

  def comp PB1V6 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp B1V6 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var v_out_total: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp TC2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_out: J_per_m3 {interface: public};
  enddef;

  def comp TC3 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_out: J_per_m3 {interface: public};
  enddef;

  def comp B1V9 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp B2V0 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var v_out_total: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp PB0V1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp B0V1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp PB2V1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp B2V1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var v_out_total: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp PB2V3 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp B2V3 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp PTC9 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var r: metre {interface: public};
    var l: metre {interface: public};
  enddef;

  def comp TC9 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_out: J_per_m3 {interface: public};
  enddef;

  def comp PB2V2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp B2V2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var mu: Js_per_m3 {interface: public};
    var mu_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var v_out_total: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp PTC4 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp TC4 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_out: J_per_m3 {interface: public};
  enddef;

  def comp PTC5 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
  enddef;

  def comp TC5 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var v_d: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_out: J_per_m3 {interface: public};
  enddef;

  def comp global as
    var beta_g: dimensionless {interface: public};
    var rho: Js2_per_m5 {interface: public};
    var mu: Js_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
  enddef;
  def map between parameters and inlet_arteriole_module for
    vars u_0_inlet_arteriole and u_0;
    vars E_inlet_arteriole and E;
    vars l_inlet_arteriole and l;
    vars r_0_inlet_arteriole and r_0;
    vars theta_inlet_arteriole and theta;
    vars u_ext_inlet_arteriole and u_ext;
    vars v_in_inlet_arteriole and v_in;
  enddef;
  def map between parameters and B1V0_module for
    vars q_C_init_B1V0 and q_C_init;
    vars E_B1V0 and E;
    vars l_B1V0 and l;
    vars r_B1V0 and r;
    vars u_ext_B1V0 and u_ext;
  enddef;
  def map between parameters and PB1V1_module for
    vars q_C_init_PB1V1 and q_C_init;
    vars E_PB1V1 and E;
    vars l_PB1V1 and l;
    vars r_PB1V1 and r;
    vars u_ext_PB1V1 and u_ext;
  enddef;
  def map between parameters and B1V1_module for
    vars E_B1V1 and E;
    vars l_B1V1 and l;
    vars r_0_B1V1 and r_0;
    vars theta_B1V1 and theta;
    vars u_ext_B1V1 and u_ext;
  enddef;
  def map between parameters and B1V2_module for
    vars E_B1V2 and E;
    vars l_B1V2 and l;
    vars r_0_B1V2 and r_0;
    vars u_ext_B1V2 and u_ext;
    vars theta_B1V2 and theta;
  enddef;
  def map between parameters and PB1V3_module for
    vars u_ext_PB1V3 and u_ext;
    vars E_PB1V3 and E;
    vars l_PB1V3 and l;
    vars r_PB1V3 and r;
  enddef;
  def map between parameters and B1V3_module for
    vars q_C_init_B1V3 and q_C_init;
    vars E_B1V3 and E;
    vars l_B1V3 and l;
    vars r_B1V3 and r;
    vars r_0_B1V3 and r_0;
    vars u_ext_B1V3 and u_ext;
  enddef;
  def map between parameters and PB1V4_module for
    vars q_C_init_PB1V4 and q_C_init;
    vars E_PB1V4 and E;
    vars l_PB1V4 and l;
    vars r_PB1V4 and r;
    vars u_ext_PB1V4 and u_ext;
  enddef;
  def map between parameters and B1V4_module for
    vars E_B1V4 and E;
    vars l_B1V4 and l;
    vars r_0_B1V4 and r_0;
    vars theta_B1V4 and theta;
    vars u_ext_B1V4 and u_ext;
  enddef;
  def map between parameters and PTC1_module for
    vars u_ext_PTC1 and u_ext;
    vars E_PTC1 and E;
    vars l_PTC1 and l;
    vars r_PTC1 and r;
  enddef;
  def map between parameters and TC1_module for
    vars q_C_init_TC1 and q_C_init;
    vars E_TC1 and E;
    vars l_TC1 and l;
    vars r_TC1 and r;
    vars u_ext_TC1 and u_ext;
    vars u_out_TC1 and u_out;
  enddef;
  def map between parameters and PB1V6_module for
    vars u_ext_PB1V6 and u_ext;
    vars E_PB1V6 and E;
    vars l_PB1V6 and l;
    vars r_PB1V6 and r;
  enddef;
  def map between parameters and B1V6_module for
    vars q_C_init_B1V6 and q_C_init;
    vars E_B1V6 and E;
    vars l_B1V6 and l;
    vars r_B1V6 and r;
    vars r_0_B1V6 and r_0;
    vars u_ext_B1V6 and u_ext;
  enddef;
  def map between parameters and TC2_module for
    vars q_C_init_TC2 and q_C_init;
    vars E_TC2 and E;
    vars l_TC2 and l;
    vars r_TC2 and r;
    vars u_ext_TC2 and u_ext;
    vars u_out_TC2 and u_out;
  enddef;
  def map between parameters and TC3_module for
    vars q_C_init_TC3 and q_C_init;
    vars E_TC3 and E;
    vars l_TC3 and l;
    vars r_TC3 and r;
    vars u_ext_TC3 and u_ext;
    vars u_out_TC3 and u_out;
  enddef;
  def map between parameters and B1V9_module for
    vars q_C_init_B1V9 and q_C_init;
    vars E_B1V9 and E;
    vars l_B1V9 and l;
    vars r_B1V9 and r;
    vars u_ext_B1V9 and u_ext;
  enddef;
  def map between parameters and B2V0_module for
    vars q_C_init_B2V0 and q_C_init;
    vars E_B2V0 and E;
    vars l_B2V0 and l;
    vars r_B2V0 and r;
    vars r_0_B2V0 and r_0;
    vars u_ext_B2V0 and u_ext;
  enddef;
  def map between parameters and PB0V1_module for
    vars q_C_init_PB0V1 and q_C_init;
    vars E_PB0V1 and E;
    vars l_PB0V1 and l;
    vars r_PB0V1 and r;
    vars u_ext_PB0V1 and u_ext;
  enddef;
  def map between parameters and B0V1_module for
    vars q_C_init_B0V1 and q_C_init;
    vars E_B0V1 and E;
    vars l_B0V1 and l;
    vars r_B0V1 and r;
    vars u_ext_B0V1 and u_ext;
  enddef;
  def map between parameters and PB2V1_module for
    vars u_ext_PB2V1 and u_ext;
    vars E_PB2V1 and E;
    vars l_PB2V1 and l;
    vars r_PB2V1 and r;
  enddef;
  def map between parameters and B2V1_module for
    vars q_C_init_B2V1 and q_C_init;
    vars E_B2V1 and E;
    vars l_B2V1 and l;
    vars r_B2V1 and r;
    vars r_0_B2V1 and r_0;
    vars u_ext_B2V1 and u_ext;
  enddef;
  def map between parameters and PB2V3_module for
    vars q_C_init_PB2V3 and q_C_init;
    vars E_PB2V3 and E;
    vars l_PB2V3 and l;
    vars r_PB2V3 and r;
    vars u_ext_PB2V3 and u_ext;
  enddef;
  def map between parameters and B2V3_module for
    vars q_C_init_B2V3 and q_C_init;
    vars E_B2V3 and E;
    vars l_B2V3 and l;
    vars r_B2V3 and r;
    vars u_ext_B2V3 and u_ext;
  enddef;
  def map between parameters and PTC9_module for
    vars u_ext_PTC9 and u_ext;
    vars theta_PTC9 and theta;
    vars E_PTC9 and E;
    vars r_0_PTC9 and r_0;
    vars l_PTC9 and l;
  enddef;
  def map between parameters and TC9_module for
    vars q_C_init_TC9 and q_C_init;
    vars E_TC9 and E;
    vars l_TC9 and l;
    vars r_TC9 and r;
    vars u_ext_TC9 and u_ext;
    vars u_out_TC9 and u_out;
  enddef;
  def map between parameters and PB2V2_module for
    vars u_ext_PB2V2 and u_ext;
    vars E_PB2V2 and E;
    vars l_PB2V2 and l;
    vars r_PB2V2 and r;
  enddef;
  def map between parameters and B2V2_module for
    vars q_C_init_B2V2 and q_C_init;
    vars E_B2V2 and E;
    vars l_B2V2 and l;
    vars r_B2V2 and r;
    vars r_0_B2V2 and r_0;
    vars u_ext_B2V2 and u_ext;
  enddef;
  def map between parameters and PTC4_module for
    vars q_C_init_PTC4 and q_C_init;
    vars E_PTC4 and E;
    vars l_PTC4 and l;
    vars r_PTC4 and r;
    vars u_ext_PTC4 and u_ext;
  enddef;
  def map between parameters and TC4_module for
    vars q_C_init_TC4 and q_C_init;
    vars E_TC4 and E;
    vars l_TC4 and l;
    vars r_TC4 and r;
    vars u_ext_TC4 and u_ext;
    vars u_out_TC4 and u_out;
  enddef;
  def map between parameters and PTC5_module for
    vars u_ext_PTC5 and u_ext;
    vars E_PTC5 and E;
    vars l_PTC5 and l;
    vars r_PTC5 and r;
  enddef;
  def map between parameters and TC5_module for
    vars q_C_init_TC5 and q_C_init;
    vars E_TC5 and E;
    vars l_TC5 and l;
    vars r_TC5 and r;
    vars u_ext_TC5 and u_ext;
    vars u_out_TC5 and u_out;
  enddef;
  def map between parameters_global and global for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and inlet_arteriole_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and B1V1_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B1V2_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B1V4_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PTC9_module for
    vars beta_g and beta_g;
    vars rho and rho;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B1V0_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PB1V1_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PB1V3_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B1V3_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PB1V4_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PTC1_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and TC1_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PB1V6_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B1V6_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and TC2_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and TC3_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B1V9_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B2V0_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PB0V1_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B0V1_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PB2V1_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B2V1_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PB2V3_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B2V3_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and TC9_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PB2V2_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and B2V2_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PTC4_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and TC4_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and PTC5_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between parameters_global and TC5_module for
    vars rho and rho;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between environment and inlet_arteriole_module for
    vars time and t;
  enddef;
  def map between environment and B1V0_module for
    vars time and t;
  enddef;
  def map between environment and PB1V1_module for
    vars time and t;
  enddef;
  def map between environment and B1V1_module for
    vars time and t;
  enddef;
  def map between environment and B1V2_module for
    vars time and t;
  enddef;
  def map between environment and PB1V3_module for
    vars time and t;
  enddef;
  def map between environment and B1V3_module for
    vars time and t;
  enddef;
  def map between environment and PB1V4_module for
    vars time and t;
  enddef;
  def map between environment and B1V4_module for
    vars time and t;
  enddef;
  def map between environment and PTC1_module for
    vars time and t;
  enddef;
  def map between environment and TC1_module for
    vars time and t;
  enddef;
  def map between environment and PB1V6_module for
    vars time and t;
  enddef;
  def map between environment and B1V6_module for
    vars time and t;
  enddef;
  def map between environment and TC2_module for
    vars time and t;
  enddef;
  def map between environment and TC3_module for
    vars time and t;
  enddef;
  def map between environment and B1V9_module for
    vars time and t;
  enddef;
  def map between environment and B2V0_module for
    vars time and t;
  enddef;
  def map between environment and PB0V1_module for
    vars time and t;
  enddef;
  def map between environment and B0V1_module for
    vars time and t;
  enddef;
  def map between environment and PB2V1_module for
    vars time and t;
  enddef;
  def map between environment and B2V1_module for
    vars time and t;
  enddef;
  def map between environment and PB2V3_module for
    vars time and t;
  enddef;
  def map between environment and B2V3_module for
    vars time and t;
  enddef;
  def map between environment and PTC9_module for
    vars time and t;
  enddef;
  def map between environment and TC9_module for
    vars time and t;
  enddef;
  def map between environment and PB2V2_module for
    vars time and t;
  enddef;
  def map between environment and B2V2_module for
    vars time and t;
  enddef;
  def map between environment and PTC4_module for
    vars time and t;
  enddef;
  def map between environment and TC4_module for
    vars time and t;
  enddef;
  def map between environment and PTC5_module for
    vars time and t;
  enddef;
  def map between environment and TC5_module for
    vars time and t;
  enddef;
  def map between inlet_arteriole_module and inlet_arteriole for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars v_in and v_in;
    vars u_C and u_C;
    vars q_C and q_C;
    vars u_C_d and u_C_d;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between inlet_arteriole_module and B1V0_module for
    vars u_d and u_in;
    vars v_out_1 and v;
  enddef;
  def map between inlet_arteriole_module and B2V0_module for
    vars u_d and u_in;
    vars v_out_2 and v;
  enddef;
  def map between B1V0_module and B1V0 for
    vars E and E;
    vars r and r;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
  enddef;
  def map between B1V0_module and PB1V1_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between PB1V1_module and PB1V1 for
    vars E and E;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars r and r;
  enddef;
  def map between PB1V1_module and B1V1_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between B1V1_module and B1V1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars C and C;
    vars R and R;
    vars R_v and R_v;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars u_C and u_C;
    vars q_C and q_C;
    vars u_C_d and u_C_d;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars mu and mu;
    vars r and r;
  enddef;
  def map between B1V1_module and B1V2_module for
    vars u_d and u_in;
    vars v_out_2 and v;
  enddef;
  def map between B1V1_module and B1V9_module for
    vars u_d and u_in;
    vars v_out_1 and v;
  enddef;
  def map between B1V2_module and B1V2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between B1V2_module and PB1V3_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between PB1V3_module and PB1V3 for
    vars E and E;
    vars l and l;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars r and r;
  enddef;
  def map between PB1V3_module and B1V3_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between B1V3_module and B1V3 for
    vars E and E;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_out_total and v_out_total;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars mu and mu;
    vars mu_rel and mu_rel;
    vars r and r;
  enddef;
  def map between B1V3_module and PB1V4_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between B1V3_module and PB1V6_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between PB1V4_module and PB1V4 for
    vars E and E;
    vars r and r;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
  enddef;
  def map between PB1V4_module and B1V4_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between B1V4_module and B1V4 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_ext and u_ext;
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars u_d and u_d;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
    vars mu and mu;
    vars mu_plasma and mu_plasma;
  enddef;
  def map between B1V4_module and PTC1_module for
    vars u_d and u_in;
    vars v_out and v;
  enddef;
  def map between PTC1_module and PTC1 for
    vars E and E;
    vars l and l;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars r and r;
  enddef;
  def map between PTC1_module and TC1_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between TC1_module and TC1 for
    vars E and E;
    vars r and r;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars u_out and u_out;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
  enddef;
  def map between PB1V6_module and PB1V6 for
    vars E and E;
    vars l and l;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars r and r;
  enddef;
  def map between PB1V6_module and B1V6_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between B1V6_module and B1V6 for
    vars E and E;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_out_total and v_out_total;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars mu and mu;
    vars mu_rel and mu_rel;
    vars r and r;
  enddef;
  def map between B1V6_module and TC2_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between B1V6_module and TC3_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between TC2_module and TC2 for
    vars E and E;
    vars r and r;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars u_out and u_out;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
  enddef;
  def map between TC3_module and TC3 for
    vars E and E;
    vars r and r;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars u_out and u_out;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
  enddef;
  def map between B1V9_module and B1V9 for
    vars E and E;
    vars r and r;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
  enddef;
  def map between B1V9_module and generic_junction_connection for
    vars v_d and v_d_B1V9_Min;
  enddef;
  def map between B1V9_module and PTC9_module for
    vars u_out and u;
  enddef;
  def map between B2V0_module and B2V0 for
    vars E and E;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_out_total and v_out_total;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars mu and mu;
    vars mu_rel and mu_rel;
    vars r and r;
  enddef;
  def map between B2V0_module and PB0V1_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between B2V0_module and PB2V1_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between PB0V1_module and PB0V1 for
    vars E and E;
    vars r and r;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
  enddef;
  def map between PB0V1_module and B0V1_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between B0V1_module and B0V1 for
    vars E and E;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars r and r;
  enddef;
  def map between B0V1_module and generic_junction_connection for
    vars v and v_B0V1_Min;
  enddef;
  def map between B0V1_module and PTC9_module for
    vars u_out and u;
  enddef;
  def map between PB2V1_module and PB2V1 for
    vars E and E;
    vars l and l;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars r and r;
  enddef;
  def map between PB2V1_module and B2V1_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between B2V1_module and B2V1 for
    vars E and E;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_out_total and v_out_total;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars mu and mu;
    vars mu_rel and mu_rel;
    vars r and r;
  enddef;
  def map between B2V1_module and PB2V3_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between B2V1_module and PB2V2_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between PB2V3_module and PB2V3 for
    vars E and E;
    vars r and r;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
  enddef;
  def map between PB2V3_module and B2V3_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between B2V3_module and B2V3 for
    vars E and E;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars r and r;
  enddef;
  def map between B2V3_module and generic_junction_connection for
    vars v and v_B2V3_Min;
  enddef;
  def map between B2V3_module and PTC9_module for
    vars u_out and u;
  enddef;
  def map between PTC9_module and PTC9 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars l and l;
    vars r_0 and r_0;
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars u_ext and u_ext;
    vars mu and mu;
    vars r and r;
  enddef;
  def map between PTC9_module and TC9_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between PTC9_module and generic_junction_connection for
    vars v_in_sum and v_PTC9_sum_Min;
  enddef;
  def map between TC9_module and TC9 for
    vars E and E;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
    vars u_out and u_out;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars r and r;
  enddef;
  def map between PB2V2_module and PB2V2 for
    vars E and E;
    vars l and l;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars r and r;
  enddef;
  def map between PB2V2_module and B2V2_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between B2V2_module and B2V2 for
    vars E and E;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_out_total and v_out_total;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars mu and mu;
    vars mu_rel and mu_rel;
    vars r and r;
  enddef;
  def map between B2V2_module and PTC4_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between B2V2_module and PTC5_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between PTC4_module and PTC4 for
    vars E and E;
    vars r and r;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
  enddef;
  def map between PTC4_module and TC4_module for
    vars v_d and v_in;
    vars u_out and u;
  enddef;
  def map between TC4_module and TC4 for
    vars E and E;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
    vars u_out and u_out;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars r and r;
  enddef;
  def map between PTC5_module and PTC5 for
    vars E and E;
    vars l and l;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars r and r;
  enddef;
  def map between PTC5_module and TC5_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between TC5_module and TC5 for
    vars E and E;
    vars r and r;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars u_out and u_out;
    vars q_C_init and q_C_init;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
  enddef;
enddef;
