def model modules as
  // ------------module_units------------//
  def import using "microvasculature_network_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit per_mmHg using unit per_mmHg;
    unit mmHg2 using unit mmHg2;
    unit Pa_per_mmHg using unit Pa_per_mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit milliM using unit milliM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit C_per_millimol using unit C_per_millimol;
    unit picoA using unit picoA;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
    unit kPa using unit kPa;
    unit L_per_s using unit L_per_s;
    unit L_per_s_per_kPa using unit L_per_s_per_kPa;
    unit kPa_per_L using unit kPa_per_L;
    unit L_per_kPa using unit L_per_kPa;
    unit kPa_s_per_L using unit kPa_s_per_L;
  enddef;

  def comp vv_split_novisco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_in: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext;
    u_d = u_0+u_C_d+u_ext;
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp pv_pericyte_type as
    var t: second {pub: in};
    // var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    // var r: metre {pub: in};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // Constitutive parameters
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var mu: Js_per_m3 {pub: out};
    var mu_rel: dimensionless {pub: out};
    var mu_plasma: Js_per_m3 {pub: in};
    var r: meter {pub: in};
    // Description: The type of variable 'v' in component 'inlet_arteriole_module' is unknown.
    // r=sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R)/I;
    v = (u_in-u)/R;
    ode(q_C, t) = v-v_out;
    // constitutive laws
    u = q_C/C+u_ext;
  enddef;

  def comp pv_split_capillary_type as
    var t: second {pub: in};
    // Constitutive parameters
    // var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    // var r: metre {pub: out};
    // var r: metre {pub: in};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_total: m3_per_s {pub: out};
    var q_C_init: m3 {pub: in};
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    var r_0: metre {pub: in};
    q_us = pi*sqr(r_0)*l;
    q = q_us+q_C;
    var mu: Js_per_m3 {pub: out};
    var mu_rel: dimensionless {pub: out};
    var mu_plasma: Js_per_m3 {pub: in};
    var r: meter {pub: in};
    // insanely stiff model if r formula is uncommented and pub: out, runs fine when set to a constant
    // r=sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // r     = sqrt(q/(pi*l)); inclusion of this formula and r pub: outmake model insanely stiff, unsolvable
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t) = (u_in-u-R*v)/I;
    v = (u_in-u)/R;
    // the below allows non constant compliance
    v_out_total = v_out_1+v_out_2;
    ode(q_C, t) = v-v_out_total;
    u = q_C/C+u_ext;
  enddef;

  def comp vv_split_capillary_type as
    var t: second {pub: in};
    // Constitutive parameters
    // var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    // var u_0: J_per_m3 {pub: in};
    // var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_in: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    var mu: Js_per_m3 {pub: out};
    var mu_rel: dimensionless {pub: out};
    var mu_plasma: Js_per_m3 {pub: in};
    var r: meter {pub: out};
    r = sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r_0*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_0*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I   = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    // if C or R depends on a variable r, modle becomes insanely stiff
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    // ode(v, t)     = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    v = (u-u_d)/R;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    // u             = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    u = u_C+u_ext;
    // u_d           = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
    u_d = u_C_d+u_ext;
  enddef;

  def comp vp_Min_pericyte_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    // var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    // var u_0: J_per_m3 {pub: in};
    // var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // var v: m3_per_s {init: 0.0, pub: out};
    var v: m3_per_s {pub: out};
    // originally the above and using the above would cause need initializing error. the reason is v used to be defined by an ode which needed a initial value to evolve from, but, for capillaries it comes an algebraic equation like (1-2)/4 and if we initialize it to 0, cellml gets confused, it is treating v as a state variable without an ode if initialized!!!
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var u_out: J_per_m3 {pub: in};
    var mu: Js_per_m3 {pub: out};
    var mu_rel: dimensionless {pub: out};
    var mu_plasma: Js_per_m3 {pub: in};
    var r: meter {pub: out};
    r = sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r_0*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_0*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I   = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    // ode(v, t)   = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    v = (u-u_out)/R;
    ode(q_C, t) = v_in_sum-v;
    u_C = q_C/C;
    // u           = u_0+u_C+u_ext+R_v*(v_in_sum-v);
    u = u_C+u_ext;
  enddef;

  def comp pv_capillary_type as
    var t: second {pub: in};
    // Constitutive parameters
    // var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    // var u_0: J_per_m3 {pub: in};
    // var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    var mu: Js_per_m3 {pub: out};
    var mu_rel: dimensionless {pub: out};
    var mu_plasma: Js_per_m3 {pub: in};
    // var r: meter {pub: out};
    // r=sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r_0*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_0*1e6{dimensionless}, 0.645{dimensionless}));
    // used r_0, otherwise model extremely stiff
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I   = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    // ode(v, t)   = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    v = (u_in-u)/R;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    // u           = u_0+u_C+u_ext+R_v*(v-v_out);
    u = u_C+u_ext;
  enddef;

  def comp pp_capillary_type as
    var t: second {pub: in};
    // Constitutive parameters
    // var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var mu: Js_per_m3 {pub: out};
    var mu_rel: dimensionless {pub: out};
    var mu_plasma: Js_per_m3 {pub: in};
    // var r: meter {pub: out};
    // r=sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp pp_pericyte_type as
    var t: second {pub: in};
    // Constitutive parameters
    // var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var mu: Js_per_m3 {pub: out};
    var mu_rel: dimensionless {pub: out};
    var mu_plasma: Js_per_m3 {pub: in};
    // var r: meter {pub: out};
    // r=sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp vp_capillary_type as
    var t: second {pub: in};
    // Constitutive parameters
    // var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    // var r: metre {pub: in};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var mu: Js_per_m3 {pub: out};
    var mu_rel: dimensionless {pub: out};
    var mu_plasma: Js_per_m3 {pub: in};
    var r: metre {pub: in};
    // var r: meter {pub: out};
    // r=sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u-u_out-v*R)/I;
    v = (u-u_out)/R;
    ode(q_C, t) = v_in-v;
    u = q_C/C+u_ext;
  enddef;

  def comp vp_pericyte_type as
    var t: second {pub: in};
    // Constitutive parameters
    // var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    // var r: metre {pub: in};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var mu: Js_per_m3 {pub: out};
    var mu_rel: dimensionless {pub: out};
    var mu_plasma: Js_per_m3 {pub: in};
    var r: metre {pub: in};
    // var r: meter {pub: out};
    // r=sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u-u_out-v*R)/I;
    v = (u-u_out)/R;
    ode(q_C, t) = v_in-v;
    u = q_C/C+u_ext;
  enddef;

  def comp vv_capillary_type as
    var t: second {pub: in};
    // Constitutive parameters
    // var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    // var u_0: J_per_m3 {pub: in};
    // var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    var mu: Js_per_m3 {pub: out};
    var mu_rel: dimensionless {pub: out};
    var mu_plasma: Js_per_m3 {pub: in};
    // var r: metre {pub: out};
    // r=sqrt(q/(pi*l));
    mu_rel = 220{dimensionless}*exp(-1.3{per_m}*2{dimensionless}*r_0*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_0*1e6{dimensionless}, 0.645{dimensionless}));
    mu = mu_rel*mu_plasma;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // I   = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    // ode(v, t)     = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    v = (u-u_d)/R;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    // u             = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    // u_d           = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out);
    u = u_C+u_ext;
    u_d = u_C_d+u_ext;
  enddef;
enddef;
