<?xml version='1.0' encoding='UTF-8'?>
<model name="modules" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <units name="Js_per_m3">
        <unit units="joule"/>
        <unit units="second"/>
        <unit exponent="-3" units="metre"/>
    </units>
    <units name="J_per_m3">
        <unit units="joule"/>
        <unit exponent="-3" units="metre"/>
    </units>
    <units name="m3">
        <unit exponent="3" units="metre"/>
    </units>
    <units name="per_m">
        <unit exponent="-1" units="metre"/>
    </units>
    <units name="m6_per_J">
        <unit exponent="6" units="metre"/>
        <unit exponent="-1" units="joule"/>
    </units>
    <units name="Js_per_m3">
        <unit units="joule"/>
        <unit units="second"/>
        <unit exponent="-3" units="metre"/>
    </units>
    <units name="Js2_per_m5">
        <unit units="joule"/>
        <unit exponent="2" units="second"/>
        <unit exponent="-5" units="metre"/>
    </units>
    <units name="m_per_s2">
        <unit units="metre"/>
        <unit exponent="-2" units="second"/>
    </units>
    <units name="Js2_per_m6">
        <unit units="joule"/>
        <unit exponent="2" units="second"/>
        <unit exponent="-6" units="metre"/>
    </units>
    <units name="Js_per_m6">
        <unit units="joule"/>
        <unit units="second"/>
        <unit exponent="-6" units="metre"/>
    </units>
    <units name="m3_per_s">
        <unit exponent="3" units="metre"/>
        <unit exponent="-1" units="second"/>
    </units>
    <component name="vv_split_capillary_type">
        <variable initial_value="0" name="t" units="second"/>
        <!-- Constitutive parameters-->
        <variable initial_value="0.004" name="mu" units="Js_per_m3"/>
        <!--var rho: Js2_per_m5 {init: 1};
var g: m_per_s2 {init: 1};
var beta_g: dimensionless {init: 1};
var theta: dimensionless {init: 1};-->
        <variable initial_value="3000" name="E" units="J_per_m3"/>
        <variable initial_value="0.00002" name="l" units="metre"/>
        <variable name="h" public_interface="out" units="metre"/>
        <variable initial_value="0.000004" name="r_0" units="metre"/>
        <!--var u_0: J_per_m3 {pub: in};-->
        <!--var I: Js2_per_m6 {pub: out};-->
        <variable name="C" public_interface="out" units="m6_per_J"/>
        <variable name="R" public_interface="out" units="Js_per_m6"/>
        <variable name="R_v" public_interface="out" units="Js_per_m6"/>
        <variable initial_value="0.2802" name="a_vessel" units="dimensionless"/>
        <variable initial_value="-505.3" name="b_vessel" units="per_m"/>
        <variable initial_value="0.1324" name="c_vessel" units="dimensionless"/>
        <variable initial_value="-11.14" name="d_vessel" units="per_m"/>
        <!-- State Variables-->
        <variable initial_value="-16" name="u_ext" units="J_per_m3"/>
        <variable name="u" public_interface="out" units="J_per_m3"/>
        <variable name="v" public_interface="out" units="m3_per_s"/>
        <variable name="u_d" public_interface="out" units="J_per_m3"/>
        <variable initial_value="0.01" name="v_in" units="m3_per_s"/>
        <variable name="u_C" public_interface="out" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_C" public_interface="out" units="m3"/>
        <variable name="u_C_d" public_interface="out" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_C_d" public_interface="out" units="m3"/>
        <variable initial_value="1" name="v_out_1" units="m3_per_s"/>
        <variable initial_value="1" name="v_out_2" units="m3_per_s"/>
        <variable name="q_0" public_interface="out" units="m3"/>
        <variable name="q" public_interface="out" units="m3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>q_0</ci>
                <apply>
                    <times/>
                    <pi/>
                    <apply>
                        <power/>
                        <ci>r_0</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <ci>l</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q</ci>
                <apply>
                    <plus/>
                    <ci>q_C</ci>
                    <ci>q_C_d</ci>
                    <ci>q_0</ci>
                </apply>
            </apply>
            <!-- Constitutive Relations-->
            <apply>
                <eq/>
                <ci>h</ci>
                <apply>
                    <times/>
                    <ci>r_0</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>a_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>b_vessel</ci>
                                    <ci>r_0</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>c_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>d_vessel</ci>
                                    <ci>r_0</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!--I   = rho*l/(pi*sqr(r_0));-->
            <apply>
                <eq/>
                <ci>C</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_0</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                        <ci>l</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>E</ci>
                        <ci>h</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">8</cn>
                        <ci>mu</ci>
                        <ci>l</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_0</ci>
                            <cn cellml:units="dimensionless">4</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_v</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="second">0.01</cn>
                    <ci>C</ci>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <!--ode(v, t)     = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;-->
            <apply>
                <eq/>
                <ci>v</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>u</ci>
                        <ci>u_d</ci>
                    </apply>
                    <ci>R</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_in</ci>
                    <ci>v</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_C</ci>
                <apply>
                    <divide/>
                    <ci>q_C</ci>
                    <apply>
                        <divide/>
                        <ci>C</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_d</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v</ci>
                        <ci>v_out_1</ci>
                    </apply>
                    <ci>v_out_2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_C_d</ci>
                <apply>
                    <divide/>
                    <ci>q_C_d</ci>
                    <apply>
                        <divide/>
                        <ci>C</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <!--u             = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);-->
            <apply>
                <eq/>
                <ci>u</ci>
                <apply>
                    <plus/>
                    <ci>u_C</ci>
                    <ci>u_ext</ci>
                </apply>
            </apply>
            <!--u_d           = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out_1-v_out_2);-->
            <apply>
                <eq/>
                <ci>u_d</ci>
                <apply>
                    <plus/>
                    <ci>u_C_d</ci>
                    <ci>u_ext</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
